<ReactionScheme>
<!-- Gs coupled Dopamine D1 Receptor; Ligand is Da,
     Dabuf is used to eliminate injected Da -->
    <Specie name="Da"               id="Da"               kdiff="0"      kdiffunit = "mu2/s"/>
    <Specie name="buf"              id="buf"              kdiff="0"   kdiffunit="mu2/s"/>
    <Specie name="Dabuf"              id="Dabuf"              kdiff="0"   kdiffunit="mu2/s"/>
    <Specie name="D1R"               id="D1R"               kdiff="0"     kdiffunit="mu2/s"/>
    <Specie name="DaD1R"            id="DaD1R"            kdiff="0"        kdiffunit = "mu2/s"/>
    <Specie name="Gsabg"             id="Gsabg"             kdiff="0"     kdiffunit="mu2/s"/>
    <Specie name="DaD1RGs"          id="DaD1RGs"          kdiff="0"        kdiffunit = "mu2/s"/>
    <Specie name="GsD1R"             id="GsD1R"             kdiff="0"     kdiffunit="mu2/s"/>
    <Specie name="GasGTP"            id="GasGTP"            kdiff="0"     kdiffunit="mu2/s"/>
    <Specie name="GasGDP"            id="GasGDP"            kdiff="0"     kdiffunit="mu2/s"/>
<!-- eliminate LRGbg with new NeuroRD version -->
    <Specie name="DaD1RGbg"          id="DaD1RGbg"         kdiff="0"        kdiffunit = "mu2/s"/>
    <Specie name="Gbg"               id="Gbg"               kdiff="0"     kdiffunit="mu2/s"/>

   <!--0. Da or Da Agonist binds to buffer: Da + buf  <->  Dabuf  -->
    <Reaction name = "Da-buf reac" id="Da-buf_id">
        <Reactant specieID="Da"                      />
        <Reactant specieID="buf"                      />
        <Product  specieID="Dabuf"                   />

        <forwardRate> 1.00e-6      </forwardRate>
        <reverseRate> 0      </reverseRate>
        <Q10>         0.2          </Q10>
    </Reaction>
    <!--1a. Da + D1R        <-> DaD1R      Kd=3000  source: Sunahara et al. Nature 1991-->
    <Reaction name = "Da+D1R--DaD1R" id="Da+D1R--DaD1R">
        <Reactant specieID="Da"                      />
        <Reactant specieID="D1R"                      />
        <Product  specieID="DaD1R"                     />

        <forwardRate> 0.00166667e-03 </forwardRate>
        <reverseRate> 5e-03        </reverseRate>
        <Q10>         0.2           </Q10>
    </Reaction>
   <!-- 2a. DaD1R + Gsabg     <-> DaD1RGs      Kd=11.666667   source: Zhuang J Neurosci 2000-->
    <Reaction name = "DaD1R+Gs--DaD1RGs" id="DaD1R+Gs--DaD1RGs">
        <Reactant specieID="DaD1R"                     />
        <Reactant specieID="Gsabg"                      />
        <Product  specieID="DaD1RGs"                    />

        <forwardRate> 0.006e-03 </forwardRate>
        <reverseRate> 0.07e-03  </reverseRate>
        <Q10>         0.2        </Q10>
    </Reaction>
    <!-- 1b. Gsabg + D1R       <-> GsD1R         Kd=35   source: PMR-->
    <Reaction name = "Gsabg+D1R--GsD1R" id="Gsabg+D1R--GsD1R">
        <Reactant specieID="Gsabg"                      />
        <Reactant specieID="D1R"                      />
        <Product  specieID="GsD1R"                     />

        <forwardRate> 0.002e-03 </forwardRate>
        <reverseRate> 0.07e-03  </reverseRate>
        <Q10>         0.2         </Q10>
    </Reaction>
    <!-- 2b. GsD1R + Da       <-> DaD1RGs       Kd=1000   source: Falkenburger J Gen Phys off-rate, Dreyer J Neurosci-->
    <Reaction name = "GsD1R+Da--DaD1RGs" id="GD1R+Da--DaD1RGs">
        <Reactant specieID="GsD1R"                     />
        <Reactant specieID="Da"                      />
        <Product  specieID="DaD1RGs"                    />

        <forwardRate> 0.005e-03 </forwardRate>
        <reverseRate> 5e-03        </reverseRate>
        <Q10>         0.2           </Q10>
    </Reaction>

    <!-- 3.  DaD1RGs <-> DaD1RGbg + GasGTP +Gbg-->
    <Reaction name = "DaD1RGs--Da1RGbg+GasGTP" id="DaD1RGs--Da1RGbg+GasGTP">
        <Reactant specieID="DaD1RGs"                    />
        <Product  specieID="DaD1RGbg"                  />
        <Product  specieID="GasGTP"                  />

        <forwardRate> 2e-03        </forwardRate>
        <reverseRate> 0.0           </reverseRate>
        <Q10>         0.2           </Q10>
    </Reaction>

    <Reaction name = "Da1RGbg--DaD1R+Gbg" id="Da1RGbg--DaD1R+Gbg">
        <Reactant specieID="DaD1RGbg"                  />
        <Product  specieID="DaD1R"                     />
        <Product  specieID="Gbg"                    />

        <forwardRate> 20e-03        </forwardRate>
        <reverseRate> 0.0           </reverseRate>
        <Q10>         0.2           </Q10>
    </Reaction>
</ReactionScheme>

