<ReactionScheme>
  <!-- Merged, tuned model, with CamKII phos of DagL.
       Uses higher order reactions for CamKII phosphorylation -->
<!-- calcium stuff first -->
    <Specie name="Ca"             id="Ca"            kdiff="174.3" kdiffunit="mu2/s"/>
    <Specie name="CaOut"          id="CaOut"         kdiff="174.3" kdiffunit="mu2/s"/>
    <Specie name="CaOutLeak"      id="CaOutLeak"     kdiff="0"     kdiffunit="mu2/s"/>
    <Specie name="Leak"           id="Leak"          kdiff="0"     kdiffunit="mu2/s"/>
    <Specie name="Calbin"         id="Calbin"        kdiff="9.3"   kdiffunit="mu2/s"/>
    <Specie name="CalbinC"        id="CalbinC"       kdiff="9.3"   kdiffunit="mu2/s"/>
    <Specie name="pmca"           id="pmca"          kdiff="0"     kdiffunit="mu2/s"/>
    <Specie name="ncx"            id="ncx"           kdiff="0"     kdiffunit="mu2/s"/>
    <Specie name="pmcaCa"         id="pmcaCa"        kdiff="0"     kdiffunit="mu2/s"/>
    <Specie name="ncxCa"          id="ncxCa"         kdiff="0"     kdiffunit="mu2/s"/>

<!-- CaM from Gq files, with either C or N site binding first -->
    <Specie name="Cam"            id="Cam"           kdiff="11"    kdiffunit="mu2/s"/>
    <Specie name="CamCa2C"        id="CamCa2C"       kdiff="11"    kdiffunit="mu2/s"/>
    <Specie name="CamCa2N"        id="CamCa2N"       kdiff="11"    kdiffunit="mu2/s"/>
    <Specie name="CamCa4"         id="CamCa4"        kdiff="11"    kdiffunit="mu2/s"/>

<!-- Gs coupled Dopamine D1 Receptor; Ligand currently called L,
     DaOut is used to eliminate injected L -->
    <Specie name="Da"            id="Da"            kdiff="10"     kdiffunit="mu2/s"/>
    <Specie name="DaOut"         id="DaOut"         kdiff="1"      kdiffunit = "mu2/s"/>
    <Specie name="Dbuf"          id="Dbuf"          kdiff="1"      kdiffunit="mu2/s"/>
    <Specie name="DaOutbuf"      id="DaOutbuf"      kdiff="0"      kdiffunit="mu2/s"/>
    <Specie name="D1R"           id="D1R"           kdiff="0"     kdiffunit="mu2/s"/>
    <Specie name="DaD1R"         id="DaD1R"         kdiff="0"     kdiffunit="mu2/s"/>
    <Specie name="Gsabg"         id="Gsabg"         kdiff="0"     kdiffunit="mu2/s"/>
    <Specie name="DaD1RGs"       id="DaD1RGs"       kdiff="0"     kdiffunit="mu2/s"/>
    <Specie name="GsD1R"         id="GsD1R"         kdiff="0"     kdiffunit="mu2/s"/>
    <Specie name="PKAcDaD1RGs"   id="PKAcDaD1RGs"   kdiff="0"     kdiffunit="mu2/s"/>
    <Specie name="pDaD1RGs"      id="pDaD1RGs"      kdiff="0"     kdiffunit="mu2/s"/>
    <Specie name="GasGTP"        id="GasGTP"        kdiff="0"     kdiffunit="mu2/s"/>
    <Specie name="GasGDP"        id="GasGDP"        kdiff="0"     kdiffunit="mu2/s"/>
    <Specie name="Gbg"           id="Gbg"           kdiff="0"     kdiffunit="mu2/s"/>

<!-- Gi coupled m4R -->
    <Specie name="ACh"          id="ACh"         kdiff="10"      kdiffunit = "mu2/s"/>
    <Specie name="AChbuf"       id="AChbuf"      kdiff="1"      kdiffunit = "mu2/s"/>
    <Specie name="Abuf"         id="Abuf"        kdiff="1"      kdiffunit = "mu2/s"/>
    <Specie name="m4R"         id="m4R"          kdiff="0"       kdiffunit = "mu2/s"/>
    <Specie name="AChm4R"       id="AChm4R"      kdiff="0"      kdiffunit = "mu2/s"/>
    <Specie name="Giabg"       id="Giabg"        kdiff="0"       kdiffunit = "mu2/s"/>
    <Specie name="AChm4RGi"     id="AChm4RGi"    kdiff="0"      kdiffunit = "mu2/s"/>
    <Specie name="Gim4R"       id="Gim4R"        kdiff="0"       kdiffunit = "mu2/s"/>
    <Specie name="GaiGTP"      id="GaiGTP"       kdiff="0"       kdiffunit = "mu2/s"/>
    <Specie name="GaiGDP"      id="GaiGDP"       kdiff="0"       kdiffunit = "mu2/s"/>
<!-- Gi coupled m4R -->
    <Specie name="m1R"          id="m1R"         kdiff="0"     kdiffunit="mu2/s"/>
    <Specie name="AChm1R"       id="AChm1R"      kdiff="0"     kdiffunit="mu2/s"/>
    <Specie name="m1RGq"        id="m1RGq"       kdiff="0"     kdiffunit="mu2/s"/> 
    <Specie name="AChm1RGq"     id="AChm1RGq"    kdiff="0"     kdiffunit="mu2/s"/>

    <!-- Gq coupled mGluR or mAChR receptor; ligand currently called Glu,
     GluOut is used to eliminate injected Glu -->
    <Specie name="Glu"            id="Glu"           kdiff="10"   kdiffunit="mu2/s"/>
    <Specie name="GluOut"         id="GluOut"        kdiff="1"   kdiffunit="mu2/s"/>
    <Specie name="Gbuf"           id="Gbuf"          kdiff="1"      kdiffunit="mu2/s"/>
    <Specie name="GluOutbuf"      id="GluOutbuf"     kdiff="0"       kdiffunit="mu2/s"/>
    <Specie name="MgluR"          id="MgluR"         kdiff="0"     kdiffunit="mu2/s"/>
    <Specie name="GluMgluR"       id="GluMgluR"      kdiff="0"     kdiffunit="mu2/s"/>
    <Specie name="GluMgluRdesens" id="GluMgluRdesens" kdiff="0"     kdiffunit="mu2/s"/>
    <Specie name="MgluRGq"        id="MgluRGq"       kdiff="0"     kdiffunit="mu2/s"/> 
    <Specie name="Gqabg"          id="Gqabg"         kdiff="0"     kdiffunit="mu2/s"/>
    <Specie name="GluMgluRGq"     id="GluMgluRGq"    kdiff="0"     kdiffunit="mu2/s"/>
    <Specie name="GaqGTP"         id="GaqGTP"        kdiff="0"     kdiffunit="mu2/s"/>
    <Specie name="GaqGDP"         id="GaqGDP"        kdiff="0"     kdiffunit="mu2/s"/>

<!-- This is AC5, from Gs model.  May need to add AC1 at some point; if adding AC1, might want to change names of AC to AC5 -->
    <Specie name="AC"             id="AC"            kdiff="0"     kdiffunit="mu2/s"/>
    <Specie name="ACGas"          id="ACGas"         kdiff="0"     kdiffunit="mu2/s"/>
    <Specie name="ACGasATP"       id="ACGasATP"      kdiff="0"     kdiffunit="mu2/s"/>
    <Specie name="ACCa"           id="ACCa"          kdiff="0"     kdiffunit="mu2/s"/>
    <Specie name="ACGasCa"        id="ACGasCa"       kdiff="0"     kdiffunit="mu2/s"/>
    <Specie name="ACGasCaATP"     id="ACGasCaATP"    kdiff="0"     kdiffunit="mu2/s"/>
    <Specie name="ACGai"          id="ACGai"         kdiff="0"     kdiffunit="mu2/s"/>
    <Specie name="ACGasGai"       id="ACGasGai"      kdiff="0"     kdiffunit="mu2/s"/>
    <Specie name="ACGasGaiATP"    id="ACGasGaiATP"   kdiff="0"     kdiffunit="mu2/s"/>

<!-- cAMP, and degradation by PDEs, from Gs model -->
    <Specie name="ATP"            id="ATP"           kdiff="74.8"  kdiffunit="mu2/s"/>
    <Specie name="cAMP"           id="cAMP"          kdiff="86.4"  kdiffunit="mu2/s"/>
    <Specie name="AMP"            id="AMP"           kdiff="0"     kdiffunit="mu2/s"/>

    <Specie name="PDE1"           id="PDE1"          kdiff="0"     kdiffunit="mu2/s"/>
    <Specie name="PDE1CamCa4cAMP" id="PDE1CamCa4cAMP" kdiff="0"     kdiffunit="mu2/s"/>
    <Specie name="PDE1CamCa4"     id="PDE1CamCa4"    kdiff="0"     kdiffunit="mu2/s"/>
    <Specie name="PDE10"          id="PDE10"         kdiff="0"     kdiffunit="mu2/s"/>
    <Specie name="PDE10cAMP"      id="PDE10cAMP"     kdiff="0"     kdiffunit="mu2/s"/>
    <Specie name="PKAcPDE10"      id="PKAcPDE10"     kdiff="0"     kdiffunit="mu2/s"/>
    <Specie name="PKAcPDE10cAMP"  id="PKAcPDE10cAMP"  kdiff="0"     kdiffunit="mu2/s"/>
    <Specie name="pPDE10"         id="pPDE10"        kdiff="0"     kdiffunit="mu2/s"/>
    <Specie name="pPDE10cAMP"     id="pPDE10cAMP"    kdiff="0"     kdiffunit="mu2/s"/>
    <Specie name="PDE2"           id="PDE2"          kdiff="0"     kdiffunit="mu2/s"/>
    <Specie name="PDE2cAMP"       id="PDE2cAMP"      kdiff="0"     kdiffunit="mu2/s"/>
    <Specie name="PDE2cAMP2"      id="PDE2cAMP2"     kdiff="0"     kdiffunit="mu2/s"/>
    <Specie name="PDE4"      id="PDE4"      kdiff="6" kdiffunit="mu2/s"/>
    <Specie name="PDE4cAMP"  id="PDE4cAMP"  kdiff="6" kdiffunit="mu2/s"/>
    <Specie name="PKAcPDE4"  id="PKAcPDE4"  kdiff="6" kdiffunit="mu2/s"/>
    <Specie name="pPDE4"     id="pPDE4"     kdiff="6" kdiffunit="mu2/s"/>
    <Specie name="pPDE4cAMP" id="pPDE4cAMP" kdiff="6" kdiffunit="mu2/s"/>

    <!-- Gq, PLC, Dag, IP3, PKC and 2ag are from Gq model --> 
    <Specie name="Plc"            id="Plc"           kdiff="0"     kdiffunit="mu2/s"/>
    <Specie name="PlcCa"          id="PlcCa"         kdiff="0"     kdiffunit="mu2/s"/>
    <Specie name="PlcCaGaq"       id="PlcCaGaq"      kdiff="0"     kdiffunit="mu2/s"/>
    <Specie name="PlcGaq"         id="PlcGaq"        kdiff="0"     kdiffunit="mu2/s"/>
    <Specie name="Pip2"           id="Pip2"          kdiff="0"     kdiffunit="mu2/s"/>
    <Specie name="PlcCaPip2"      id="PlcCaPip2"     kdiff="0"     kdiffunit="mu2/s"/>
    <Specie name="PlcCaGaqPip2"   id="PlcCaGaqPip2"  kdiff="0"     kdiffunit="mu2/s"/>
    <Specie name="Ip3"            id="Ip3"           kdiff="10.6"  kdiffunit="mu2/s"/>
    <Specie name="Dag"            id="Dag"           kdiff="0"     kdiffunit="mu2/s"/>

<!-- degradation of Dag, 2ag and IP3 -->
    <Specie name="DagK"           id="DagK"          kdiff="0"     kdiffunit="mu2/s"/>
    <Specie name="DagKdag"        id="DagKdag"       kdiff="0"     kdiffunit="mu2/s"/>
    <Specie name="PA"             id="PA"            kdiff="0"     kdiffunit="mu2/s"/>
    <Specie name="2agDegrad"      id="2agDegrad"     kdiff="88.6"  kdiffunit="mu2/s"/>
    <Specie name="Ip3degrad"      id="Ip3degrad"     kdiff="10.6"  kdiffunit="mu2/s"/>
<!-- Production of endocannabinoid -->
    <Specie name="Dgl"            id="Dgl"           kdiff="0"     kdiffunit="mu2/s"/>
    <Specie name="pDgl"           id="pDgl"          kdiff="0"     kdiffunit="mu2/s"/>
    <Specie name="CaDgl"          id="CaDgl"         kdiff="0"     kdiffunit="mu2/s"/>
    <Specie name="CapDgl"          id="CapDgl"         kdiff="0"     kdiffunit="mu2/s"/>
    <Specie name="DagCaDgl"       id="DagCaDgl"      kdiff="0"     kdiffunit="mu2/s"/>
    <Specie name="DagCapDgl"       id="DagCapDgl"      kdiff="0"     kdiffunit="mu2/s"/>
    <Specie name="2ag"            id="2ag"           kdiff="88.6"  kdiffunit="mu2/s"/>
    <Specie name="Dgl_CKCamCa4"   id="Dgl_CKCamCa4"   kdiff="0"   kdiffunit="mu2/s"/>
    <Specie name="Dgl_CKpCamCa4"  id="Dgl_CKpCamCa4"  kdiff="0"   kdiffunit="mu2/s"/>
    <Specie name="Dgl_CKp"        id="Dgl_CKp"        kdiff="0"   kdiffunit="mu2/s"/>

<!-- Kinases and Phosphatases -->    
    <Specie name="PIkinase"       id="PIkinase"      kdiff="0"     kdiffunit="mu2/s"/>
    <Specie name="Ip3degPIk"      id="Ip3degPIk"     kdiff="0"     kdiffunit="mu2/s"/>
    
    <Specie name="Pkc"            id="Pkc"           kdiff="14"    kdiffunit="mu2/s"/>
    <Specie name="PkcCa"          id="PkcCa"         kdiff="14"    kdiffunit="mu2/s"/>
    <Specie name="PkcCaDag"       id="PkcCaDag"      kdiff="0"     kdiffunit="mu2/s"/>
   
<!-- PP1, PP2B, PP2A, CaMKII, PKA, Darpp32 from Gs, since Gq didn't have them -->     
    <Specie name="PP2B"           id="PP2B"          kdiff="0"     kdiffunit="mu2/s"/>
    <Specie name="PP2BCam"        id="PP2BCam"       kdiff="0"     kdiffunit="mu2/s"/>
    <Specie name="PP2BCamCa2C"    id="PP2BCamCa2C"   kdiff="0"     kdiffunit="mu2/s"/>
    <Specie name="PP2BCamCa2N"    id="PP2BCamCa2N"   kdiff="0"     kdiffunit="mu2/s"/>
    <Specie name="PP2BCamCa4"     id="PP2BCamCa4"    kdiff="0"     kdiffunit="mu2/s"/>
    <Specie name="PP1"            id="PP1"           kdiff="0"     kdiffunit="mu2/s"/>

<!-- PP2A -->
    <Specie name="PP2ABPR72"      id="PP2ABPR72"    kdiff="0"     kdiffunit="mu2/s"/>
    <Specie name="PP2AB56d"       id="PP2AB56d"     kdiff="0"     kdiffunit="mu2/s"/>
    <Specie name="PKAcPP2AB56d"   id="PKAcPP2AB56d" kdiff="0"     kdiffunit="mu2/s"/>
    <Specie name="pPP2A"          id="pPP2A"         kdiff="0"     kdiffunit="mu2/s"/>
    <Specie name="PP2AC"          id="PP2AC"         kdiff="0"     kdiffunit="mu2/s"/>

<!-- CaMKII: delete Complex and pComplex and re-do rate  constants when using new NeuroRD version -->
    <Specie name="CK"             id="CK"            kdiff="3.6"   kdiffunit="mu2/s"/>
    <Specie name="CKCamCa4"       id="CKCamCa4"      kdiff="3.6"   kdiffunit="mu2/s"/>
    <Specie name="CKpCamCa4"      id="CKpCamCa4"     kdiff="3.6"   kdiffunit="mu2/s"/>
    <Specie name="CKp"            id="CKp"           kdiff="3.6"   kdiffunit="mu2/s"/>
    <Specie name="CKpPP1"         id="CKpPP1"        kdiff="0"     kdiffunit="mu2/s"/>
    <Specie name="CKpCamCa4PP1"   id="CKpCamCa4PP1"  kdiff="0"     kdiffunit="mu2/s"/>

<!-- PKA -->
    <Specie name="PKA"            id="PKA"           kdiff="0"     kdiffunit="mu2/s"/>
    <Specie name="PKAcAMP2"       id="PKAcAMP2"      kdiff="0"     kdiffunit="mu2/s"/>
    <Specie name="PKAcAMP4"       id="PKAcAMP4"      kdiff="0"     kdiffunit="mu2/s"/>
    <Specie name="PKAc"           id="PKAc"          kdiff="0.836" kdiffunit="mu2/s"/>
    <Specie name="PKAr"           id="PKAr"          kdiff="0"     kdiffunit="mu2/s"/>
<!-- Use the updated reactions from Asia's hippocampal model -->

<!-- D32,Dp34 -->
    <Specie name="D32"            id="D32"           kdiff="8.9"   kdiffunit="mu2/s"/>
    <Specie name="D32PKA"         id="D32PKA"        kdiff="6.8"   kdiffunit="mu2/s"/>
    <Specie name="Dp34"           id="Dp34"          kdiff="8.8"   kdiffunit="mu2/s"/>
    <Specie name="Dp34PP1"        id="Dp34PP1"       kdiff="0"     kdiffunit="mu2/s"/>
    <Specie name="Dp34PP2BCamCa4" id="Dp34PP2BCamCa4" kdiff="0"     kdiffunit="mu2/s"/>
    <Specie name="Dp34PP1PP2BCamCa4" id="Dp34PP1PP2BCamCa4" kdiff="0"  kdiffunit="mu2/s"/>
    <Specie name="Dp34PP2ABPR72"  id="Dp34PP2ABPR72" kdiff="0"     kdiffunit="mu2/s"/>
    <Specie name="Dp34PP2AB56d"   id="Dp34PP2AB56d"  kdiff="0"     kdiffunit="mu2/s"/>
    <Specie name="Dp34PP1PP2ABPR72" id="Dp34PP1PP2ABPR72" kdiff="0"  kdiffunit="mu2/s"/>
    <Specie name="Dp34PP1PP2AB56d" id="Dp34PP1PP2AB56d"  kdiff="0"  kdiffunit="mu2/s"/>

<!-- Dp75 -->
    <Specie name="Cdk5"           id="Cdk5"          kdiff="0"     kdiffunit="mu2/s"/>
    <Specie name="Cdk5D32"        id="Cdk5D32"       kdiff="0"     kdiffunit="mu2/s"/>
    <Specie name="Dp75"           id="Dp75"          kdiff="8.8"   kdiffunit="mu2/s"/>
    <Specie name="Dp75PKA"        id="Dp75PKA"       kdiff="6.8"   kdiffunit="mu2/s"/>
    <Specie name="Dp75PP2ABPR72"  id="Dp75PP2ABPR72"  kdiff="0"   kdiffunit="mu2/s"/>
    <Specie name="Dp75PP2AB56d"   id="Dp75PP2AB56d"   kdiff="0"   kdiffunit="mu2/s"/>
    <Specie name="Dp75PP2AC"      id="Dp75PP2AC"     kdiff="0"     kdiffunit="mu2/s"/>
    <Specie name="Dp75pPP2A"      id="Dp75pPP2A"     kdiff="0"     kdiffunit="mu2/s"/>
<!-- AKAR -->
    <Specie name="AKAR3"        id="AKAR3"       kdiff="0"     kdiffunit="mu2/s"/>
    <Specie name="pAKAR3"       id="pAKAR3"      kdiff="0"     kdiffunit="mu2/s"/>
    <Specie name="PKAcAKAR3"    id="PKAcAKAR3"     kdiff="0"     kdiffunit="mu2/s"/>
    <Specie name="PP1pAKAR3"    id="PP1pAKAR3"     kdiff="0"     kdiffunit="mu2/s"/>

<!-- For now, no GluA1 receptors -->

<!--*************************************************************************
    Now, the reactions themselves   SAME means params are same in both files
    **************************************************************************-->

<!--I. *********** Ca pump and buffer rxns  ************* -->
<!-- i: Ca pump high affinity -    Ca + pmca <-> pmcaCa  SAME-->
    <Reaction name = "Ca_pump1a" id="Ca_pump1a">
	<Reactant specieID="Ca"/>
	<Reactant specieID="pmca"/>
	<Product specieID="pmcaCa"/>

	<forwardRate>0.05e-3</forwardRate>
	<reverseRate>9e-3</reverseRate>
	<Q10>0.2</Q10>
    </Reaction>

<!-- ii: Ca pump high affinity -    pmcaCa <-> pmca + CaOut   SAME-->
    <Reaction name = "Ca_pump1b" id="Ca_pump1b">
	<Reactant specieID="pmcaCa"/>
	<Product specieID="pmca"/>
	<Product specieID="CaOut"/>

	<forwardRate>3.0e-3</forwardRate>
	<reverseRate>0</reverseRate>
	<Q10>0.2</Q10>
    </Reaction>

<!-- iii: Ca pump low affinity -    Ca + ncx <-> ncxCa  SAME-->
    <Reaction name = "Ca_pump2a" id="Ca_pump2a">
	<Reactant specieID="Ca"/>
	<Reactant specieID="ncx"/>
	<Product specieID="ncxCa"/>

	<forwardRate>0.011e-3</forwardRate>
	<reverseRate>11.2e-3</reverseRate>
	<Q10>0.2</Q10>
    </Reaction>

<!-- iv: Ca pump low affinity -    ncxCa <-> ncx + CaOut   SAME-->
    <Reaction name = "Ca_pump2b" id="Ca_pump2b">
	<Reactant specieID="ncxCa"/>
	<Product specieID="ncx"/>
	<Product specieID="CaOut"/>

	<forwardRate>5.6e-3</forwardRate>
	<reverseRate>0</reverseRate>
	<Q10>0.2</Q10>
    </Reaction>
<!-- v: Ca leak -    CaOut + Leak <-> CaOutLeak  GQ RXN FILE, Leak is sm only-->
    <Reaction name = "Ca_leak" id="Ca_leak">
	<Reactant specieID="CaOut"/>
	<Reactant specieID="Leak"/>
	<Product specieID="CaOutLeak"/>

        <forwardRate>0.5e-6</forwardRate>
	<reverseRate>1.1e-3</reverseRate>
	<Q10>0.2</Q10>
    </Reaction>

<!-- vi: Ca leak -    CaOutLeak <-> Ca (inside) + Leak  -->
    <Reaction name = "Ca_leak" id="Ca_leak">
	<Reactant specieID="CaOutLeak"/>
	<Product specieID="Ca"/>
	<Product specieID="Leak"/>

        <forwardRate>1.1e-3</forwardRate>
	<reverseRate>0</reverseRate>
	<Q10>0.2</Q10>
    </Reaction>

<!-- vii: Ca Buffer    Ca + Calbindin <-> calbinC  SAME-->
    <Reaction name = "Ca_buffer" id="Ca_Buffer">
        <Reactant specieID="Ca"/>
        <Reactant specieID="Calbin"/>
        <Product specieID="CalbinC"/>

        <forwardRate>0.028e-3</forwardRate>
        <reverseRate>19.6</reverseRate>
        <Q10>0.2</Q10>
    </Reaction>

<!--1A) Cam  + 2Ca <-> CamCa2C GQ RXN FILE, C or N can bind first-->
    <Reaction name = "CamC_bind" id="CamC_bind">
	<Reactant specieID="Cam"/>
	<Reactant specieID="Ca" n="2"/>
	<Product specieID="CamCa2C"/>

	<forwardRate>0.006e-3</forwardRate>
	<reverseRate>9.1e-3</reverseRate>
	<Q10>0.2</Q10>
    </Reaction>

<!--2A) CamCa2C  + 2Ca <-> CamCa4 GQ RXN FILE, C or N can bind first-->
    <Reaction name = "CamCa2C_bind" id="CamCa2C_bind">
	<Reactant specieID="CamCa2C"/>
	<Reactant specieID="Ca" n="2"/>
	<Product specieID="CamCa4"/>

	<forwardRate>0.1e-3</forwardRate>
	<reverseRate>1000e-3</reverseRate>
	<Q10>0.2</Q10>
    </Reaction>

<!--1B) Cam  + 2Ca <-> CamCa2N GQ RXN FILE, C or N can bind first-->
    <Reaction name = "CamN_bind" id="CamN_bind">
	<Reactant specieID="Cam"/>
	<Reactant specieID="Ca" n="2"/>
	<Product specieID="CamCa2N"/>

	<forwardRate>0.1e-3</forwardRate>
	<reverseRate>1000e-3</reverseRate>
	<Q10>0.2</Q10>
    </Reaction>

<!--2B) CamCa2N  + 2Ca <-> CamCa4 GQ RXN FILE, C or N can bind first-->
    <Reaction name = "CamCa2N_bind" id="CamCa2N_bind">
	<Reactant specieID="CamCa2N"/>
	<Reactant specieID="Ca" n="2"/>
	<Product specieID="CamCa4"/>

	<forwardRate>0.006e-3</forwardRate>
	<reverseRate>9.1e-3</reverseRate>
	<Q10>0.2</Q10>
    </Reaction>

<!--II. *********** Gs coupled receptor, from GS RXN FILE *************-->
   <!--0a. Da or Da Agonist is extruded  -->
   <Reaction name = "Da--DaOut" id="Da--DaOut">
  	<Reactant specieID="Da"/>
        <Product  specieID="DaOut"                   />
        <forwardRate> 1.0e-3      </forwardRate>
        <reverseRate> 0.055e-6      </reverseRate>
        <Q10>         0.2          </Q10>
    </Reaction>

   <!--0b. excess DaOut binds to buffer to prevent baseline shift: DaOut + Dbuf  <->  DaOutbuf  -->
    <Reaction name = "DaOut+Dbuf--DaOutbuf" id="DaOut_buf--DaOutbuf">
        <Reactant specieID="DaOut"                      />
        <Reactant specieID="Dbuf"                      />
        <Product  specieID="DaOutbuf"                     />
        <forwardRate> 0.1e-06 </forwardRate>
        <reverseRate> 0      </reverseRate>
        <Q10>         0.2          </Q10>
    </Reaction>
    
  <!--1a. Da + D1R        <-> DaD1R      Kd=3000  source: Sunahara et al. Nature 1991-->
    <Reaction name = "Da+D1R--DaD1R" id="Da+D1R--DaD1R">
        <Reactant specieID="Da"                      />
        <Reactant specieID="D1R"                      />
        <Product  specieID="DaD1R"                     />

        <forwardRate> 0.00166667e-03 </forwardRate>
        <reverseRate> 5e-03        </reverseRate>
        <Q10>         0.2           </Q10>
    </Reaction>
   <!-- 2a. DaD1R + Gsabg     <-> DaD1RGs      Kd=11.666667   source: Zhuang J Neurosci 2000-->
    <Reaction name = "DaD1R+Gs--DaD1RGs" id="DaD1R+Gs--DaD1RGs">
        <Reactant specieID="DaD1R"                     />
        <Reactant specieID="Gsabg"                      />
        <Product  specieID="DaD1RGs"                    />

        <forwardRate> 0.03e-03 </forwardRate>
        <reverseRate> 0.4e-03  </reverseRate>
        <Q10>         0.2        </Q10>
    </Reaction>
    <!-- 1b. Gsabg + D1R       <-> GsD1R         Kd=35   source: PMR-->
    <Reaction name = "Gsabg+D1R--GsD1R" id="Gsabg+D1R--GsD1R">
        <Reactant specieID="Gsabg"                      />
        <Reactant specieID="D1R"                      />
        <Product  specieID="GsD1R"                     />

        <forwardRate> 0.01e-03 </forwardRate>
        <reverseRate> 0.4e-03  </reverseRate>
        <Q10>         0.2         </Q10>
    </Reaction>
    <!-- 2b. GsD1R + Da       <-> DaD1RGs       Kd=1000   source: Falkenburger J Gen Phys off-rate, Dreyer J Neurosci-->
    <Reaction name = "GsD1R+Da--DaD1RGs" id="GD1R+Da--DaD1RGs">
        <Reactant specieID="GsD1R"                     />
        <Reactant specieID="Da"                      />
        <Product  specieID="DaD1RGs"                    />

        <forwardRate> 0.005e-03 </forwardRate>
        <reverseRate> 5e-03        </reverseRate>
        <Q10>         0.2           </Q10>
    </Reaction>

    <!-- 3.  DaD1RGs <-> DaD1R + GasGTP +Gbg-->
        <Reaction name = "DaD1RGs-DaD1R+GasGTP+Gbg reac" id="DaD1RGs-DaD1R+GasGTP+Gbg_id">
        <Reactant specieID="DaD1RGs"                    />
        <Product  specieID="DaD1R"                  />
        <Product  specieID="GasGTP"                  />
        <Product  specieID="Gbg"                  />

        <forwardRate> 0.25e-03        </forwardRate>
        <reverseRate> 0.0           </reverseRate>
        <Q10>         0.2           </Q10>
    </Reaction>

<!--*****************PKAc phosphorylation of DaD1R *******************************-->
    <!--4. PKAc + DaD1RGs -> PKAcDaD1RGs Km= 125nM-->
    <Reaction name = "DaD1RGs phosp1" id="phospDaD1RGs1">
        <Reactant specieID="PKAc"                   />
        <Reactant specieID="DaD1RGs"                  />
        <Product  specieID="PKAcDaD1RGs"              />

        <forwardRate> 0.0008e-03    </forwardRate>
        <reverseRate> 0.08e-03    </reverseRate>
        <Q10>         0.2           </Q10>
    </Reaction>
    <!--5. PKAcDaD1RGs -> PKAc + phosphoDaD1RGs -->
    <Reaction name = "DaD1RGs phosp2" id="phospDaD1RGs2">
        <Reactant specieID="PKAcDaD1RGs"              />
        <Product  specieID="pDaD1RGs"                 />
        <Product  specieID="PKAc"                   />

        <forwardRate> 0.02e-03    </forwardRate>
        <reverseRate> 0             </reverseRate>
        <Q10>         0.2           </Q10>
    </Reaction>

    <!--6. pDaD1RGs -> DaD1RGs -->
    <Reaction name = "dephosD1R" id="dphospD1R">
        <Reactant specieID="pDaD1RGs"              />
        <Product  specieID="DaD1RGs"               />

        <forwardRate>  0.002e-03    </forwardRate>
        <reverseRate>  0            </reverseRate>
        <Q10>          0.2          </Q10>
    </Reaction>

<!--III. *********** Gq coupled receptor, from GQ RXN FILE *************-->
<!--0a. Glu or Glu Agonist is extruded -->
    <!--0a. GluOut    Glu <-> GluOut>  -->
  <Reaction name = "Glu--GluOut" id="Glu--GluOut">
  	<Reactant specieID="Glu"/>
	<Product specieID="GluOut"/>

  	<forwardRate>0.6e-3</forwardRate>
  	<reverseRate>0.03e-6</reverseRate>
  	<Q10>0.2</Q10>
  </Reaction>
  
  <!--0b. GluOut binds irreversible buffer to prevent baseline shift: GluOut + Gbuf <-> GluOutbuf -->
    <Reaction name = "GluOut-buf reac" id="Glu-buf_id">
        <Reactant specieID="GluOut"                      />
        <Reactant specieID="Gbuf"                      />
        <Product  specieID="GluOutbuf"                   />

        <forwardRate> 0.1e-6      </forwardRate>
        <reverseRate> 0      </reverseRate>
        <Q10>         0.2          </Q10>
    </Reaction>
    
   <!--0c. GluMgluR <==> Desensitized, needed for prolonged DHPG application -->
      <Reaction name = "Glu+MgluR--GluMgluRdesens" id="Glu+MgluR--GluMgluRdesens">
        <Reactant specieID="GluMgluR"              />
        <Product  specieID="GluMgluRdesens"         />

        <forwardRate> 0.0625e-03 </forwardRate>
        <reverseRate> 0.001e-03      </reverseRate>
        <Q10>         0.2          </Q10>
    </Reaction>

   <!--1a. Glu or Glu agonist Dhpg: Glu + MgluR <==> GluMgluR
    1st set of rates is for Dhpg, 2nd set of rates for Glu  -->
      <Reaction name = "Glu+MgluR--GluMgluR" id="Glu+MgluR--GluMgluR">
        <Reactant specieID="Glu"              />
        <Reactant specieID="MgluR"              />
        <Product  specieID="GluMgluR"         />

        <!--forwardRate> 0.5e-06 </forwardRate>
        <reverseRate> 6.6e-03      </reverseRate-->
	<!-- uncomment below and comment above for Glu (vs Dhpg) -->
        <forwardRate> 0.002e-03 </forwardRate>
        <reverseRate> 1e-03      </reverseRate>
        <Q10>         0.2          </Q10>
    </Reaction>

    <!--2a. Gqabg + GluMgluR    <-> GluMgluRGq    -->
    <Reaction name = "Gqabg+GluMgluR--GluMgluRGq" id="Gqabg+GluMgluR--GluMgluRGq">
        <Reactant specieID="Gqabg"               />
        <Reactant specieID="GluMgluR"             />
        <Product  specieID="GluMgluRGq"            />

        <forwardRate>  0.0015e-03  </forwardRate>
        <reverseRate>   0.68e-03  </reverseRate>
        <Q10>         0.2           </Q10>
    </Reaction>

  <!--1b. Gqabg + MgluR <-> MgluRGq -->
  <Reaction name = "Gqabg+MgluR- -MgluRGq" id="Gqabg+MgluR- -MgluRGq">
        <Reactant specieID="Gqabg" />
        <Reactant specieID="MgluR" />
        <Product specieID="MgluRGq" />

        <forwardRate> 0.75e-06 </forwardRate>
        <reverseRate> 6.8e-03 </reverseRate>
        <Q10> 0.2 </Q10>
   </Reaction>

   <!--2b. Glu + MgluRGq <-> GluMgluRGq -->
   <Reaction name = "Glu+MgluRGq- -GluMgluRGq" id="Glu+MgluRGq- -GluMgluRGq">
        <Reactant specieID="Glu" />
        <Reactant specieID="MgluRGq" />
        <Product specieID="GluMgluRGq" />

        <forwardRate> 0.001e-03 </forwardRate>
        <reverseRate> 1e-03 </reverseRate>
        <Q10> 0.2 </Q10>
   </Reaction>

   <!--3. GabgGluMglu    <-> GaqGTP + GluMgluRGbg -->
    <Reaction name = "GluMgluRGq--GaqGTP+GluMgluRGbg" id="GluMgluRGq--GaqGTP+GluMgluRGbg">
        <Reactant specieID="GluMgluRGq"               />
        <Product specieID="GaqGTP"             />
        <Product specieID="GluMgluR"            /> 
        <Product specieID="Gbg"             />
 
        <forwardRate>  0.5e-03 </forwardRate>
        <reverseRate>   0  </reverseRate>
        <Q10>         0.2           </Q10>
    </Reaction>

    <!-- *********** Gq coupled m1 ACh receptor  ***************-->
   <!--1a. ACh binding to m1R: ACh + m1R <=> AChm1R  -->
      <Reaction name = "ACh+m1R--AChm1R" id="ACh+m1R--AChm1R">
        <Reactant specieID="ACh"              />
        <Reactant specieID="m1R"              />
        <Product  specieID="AChm1R"         />

        <forwardRate> 0.095e-06 </forwardRate>
        <reverseRate> 2.5e-03      </reverseRate>
        <Q10>         0.2          </Q10>
    </Reaction>

    <!--2a. Gqabg + AChm1R    <-> AChm1RGq  - make lower than for mGluR, to decrease basal Gq  -->
    <Reaction name = "Gqabg+AChm1R--AChm1RGq" id="Gqabg+AChm1R--AChm1RGq">
        <Reactant specieID="Gqabg"               />
        <Reactant specieID="AChm1R"             />
        <Product  specieID="AChm1RGq"            />

        <forwardRate>  0.024e-03  </forwardRate>
        <reverseRate>  0.42e-03  </reverseRate>
        <Q10>         0.2           </Q10>
    </Reaction>

  <!--1b. Gqabg + m1R <-> m1RGq -->
  <Reaction name = "Gqabg+m1R- -m1RGq" id="Gqabg+m1R- -m1RGq">
        <Reactant specieID="Gqabg" />
        <Reactant specieID="m1R" />
        <Product specieID="m1RGq" />

        <forwardRate> 0.000576e-03 </forwardRate>
        <reverseRate> 0.42e-03  </reverseRate>
        <Q10> 0.2 </Q10>
   </Reaction>

   <!--2b. ACh + m1RGq <-> AChm1RGq: 20x higher affinity than Glu binding mGluR-->
   <Reaction name = "ACh+m1RGq- -AChm1RGq" id="ACh+m1RGq- -AChm1RGq">
        <Reactant specieID="ACh" />
        <Reactant specieID="m1RGq" />
        <Product specieID="AChm1RGq" />

        <forwardRate> 0.000666e-03 </forwardRate>
        <reverseRate> 2.5e-03        </reverseRate>
        <Q10> 0.2 </Q10>
   </Reaction>

   <!--3. GabgAChMglu    <-> GaqGTP + AChm1RGbg -->
    <Reaction name = "AChm1RGq--GaqGTP+AChm1RGbg" id="AChm1RGq--GaqGTP+AChm1RGbg">
        <Reactant specieID="AChm1RGq"               />
        <Product specieID="GaqGTP"             />
        <Product specieID="AChm1R"            /> 
        <Product specieID="Gbg"             />
 
        <forwardRate>  0.5e-03 </forwardRate>
        <reverseRate>   0  </reverseRate>
        <Q10>         0.2           </Q10>
    </Reaction>

    <!-- *********** Gi coupled m4 receptor  ***************-->
    <!--0. ACh + Abuf        <-> AChbuf     irreversible binding -->
    <Reaction name = "ACh+Abuf--AChbuf" id="ACh+Abuf--AChbuf">
        <Reactant specieID="ACh"                      />
        <Reactant specieID="Abuf"                      />
        <Product  specieID="AChbuf"                     />

        <forwardRate> 0.05e-03 </forwardRate>
        <reverseRate> 0        </reverseRate>
        <Q10>         0.2           </Q10>
    </Reaction>
   <!-- ACh or ACh agonist: ACh + m4R <==> AChm4R       Kd = 1000: low affinity-->
      <Reaction name = "ACh+m4R--AChm4R" id="ACh+m4R--AChm4R">
        <Reactant specieID="ACh"              />
        <Reactant specieID="m4R"              />
        <Product  specieID="AChm4R"         />

        <forwardRate> 0.000169e-03 </forwardRate>
        <reverseRate> 2.5e-03      </reverseRate>
        <Q10>         0.2          </Q10>
    </Reaction>

   <!-- Giabg + AChm4R    <-> GiabgAChm4R    Kd = 12.21  source:  sengeles JBiolChem 265 -->
    <Reaction name = "Giabg+AChm4R--AChm4RGi" id="Giabg+AChm4R--AChm4RGi">
        <Reactant specieID="AChm4R"             />
        <Reactant specieID="Giabg"               />
        <Product  specieID="AChm4RGi"            />

        <forwardRate>  0.024e-03  </forwardRate>
        <reverseRate>  0.42e-03  </reverseRate>
        <Q10>         0.2           </Q10>
    </Reaction>

    <!-- Gi + m4R       <-> Gim4R       Kd = 350  source:  PMR, Hein et al. JBC 2006: Gi dissoc tau=14s  -->
    <Reaction name = "Giabg+m4R--Gim4R" id="Giabg+m4R--Gim4R">
        <Reactant specieID="Giabg"                      />
        <Reactant specieID="m4R"                      />
        <Product  specieID="Gim4R"                     />

        <forwardRate> 0.00178e-03 </forwardRate>
        <reverseRate> 0.42e-03  </reverseRate>
        <Q10>         0.2         </Q10>
    </Reaction>
    <!-- Gim4R + ACh       <-> AChm4RGi      Kd = 100 nM: high affinity-->
    <Reaction name = "Gim4R+ACh--AChm4RGi" id="Gm4R+ACh--AChm4RGi">
        <Reactant specieID="Gim4R"                     />
        <Reactant specieID="ACh"                      />
        <Product  specieID="AChm4RGi"                    />

        <forwardRate> 0.00228e-03 </forwardRate>
        <reverseRate> 2.5e-03        </reverseRate>
        <Q10>         0.2           </Q10>
    </Reaction>

   <!--    AChm4RGiabg   <-> GaiGTP + AChm4R +Gbg   -->
    <Reaction name = "AChm4RGi--GaiGTP+AChm4R+Gbg" id="AChm4RGi--GaiGTP+AChm4R+Gbg">
        <Reactant specieID="AChm4RGi"               />
        <Product specieID="GaiGTP"             />
        <Product  specieID="AChm4R"                     />
        <Product  specieID="Gbg"                    />

        <forwardRate>  1.0e-03 </forwardRate>
        <reverseRate>   0  </reverseRate>
        <Q10>         0.2           </Q10>
    </Reaction>

<!--IV. *************** G protein hydrolysis and regeneration  *******************-->
    <!--1. hydrolysis: GasGTP       <-> GasGDP             -->
    <Reaction name = "GasGTP--GasGDP reac" id="GasGTP--GasGDP_id">
        <Reactant specieID="GasGTP"                  />
        <Product  specieID="GasGDP"                  />

        <forwardRate> 0.125e-03        </forwardRate>
        <reverseRate> 0.0           </reverseRate>
        <Q10>         0.2           </Q10>
    </Reaction>

    <!-- slow this down if depletion is significant, or to match regen of Gaq -->
    <!--2. regen: GasGDP + Gbg       <-> Gsabg          (in xpp: k5=100), Kd=? -->
    <Reaction name = "GasGDP+Gbg--Gs reac" id="GasGDP+Gbg--Gs_id">
        <Reactant specieID="GasGDP"                  />
        <Reactant specieID="Gbg"                    />
        <Product  specieID="Gsabg"                      />

        <forwardRate> 2e-03       </forwardRate>
        <reverseRate> 0.0           </reverseRate>
        <Q10>         0.2           </Q10>
    </Reaction>

<!-- Hydrolysis of GaqGTP - slower than with GAP activity -->
    <!--3. GaqGTP <-> GaqGDP -->
    <Reaction name = "GaqGTP--GaqGDP" id="GaqGTP--GaqGDP">
        <Reactant specieID="GaqGTP"            />
        <Product  specieID="GaqGDP"            />

        <forwardRate>   1e-03   </forwardRate>
        <reverseRate>   0  </reverseRate>
        <Q10>         0.2           </Q10>
    </Reaction>

<!-- 2nd order (was 1st order in Gq files) regeneration of Gaqbg -->
    <!--4. GaqGDP + Gbg <-> Gqabg -->
    <Reaction name = "GaqGDP+Gbg--Gqabg" id="GaqGDP+Gbg--Gqabg">
        <Reactant specieID="GaqGDP"            />
        <Reactant specieID="Gbg"                    />
        <Product  specieID="Gqabg"            />

        <forwardRate>   2e-03   </forwardRate>
        <reverseRate>   0  </reverseRate>
        <Q10>         0.2           </Q10>
    </Reaction>

<!-- Hydrolysis of GaiGTP - slower than with GAP activity  source: sengeles JBiolChem 265 -->
    <Reaction name = "GaiGTP--GaiGDP" id="GaiGTP--GaiGDP">
        <Reactant specieID="GaiGTP"            />
        <Product  specieID="GaiGDP"            />

        <forwardRate>   1.0e-03   </forwardRate>
        <reverseRate>   0  </reverseRate>
        <Q10>         0.2           </Q10>
    </Reaction>

<!-- 2nd order  regeneration of Gaibg source: -->
    <Reaction name = "GaiGDP--Giabg" id="GaiGDP--Giabg">
        <Reactant specieID="GaiGDP"            />
        <Reactant specieID="Gbg"                    />
        <Product  specieID="Giabg"            />

        <forwardRate>   2e-03   </forwardRate>
        <reverseRate>   0  </reverseRate>
        <Q10>         0.2           </Q10>
    </Reaction>

<!-- ***************************************************************************-->
<!--V. AC5 to cAMP with PDEs, from Gs RXN FILE. May need to add AC1 at some point -->
    <!--1. GasGTP + AC <-> ACGas(GTP) -->
    <Reaction name = "GasGTP+AC--ACGas reac" id="GasGTP+AC--ACGas_id">
        <Reactant specieID="GasGTP"                  />
        <Reactant specieID="AC"                     />
        <Product  specieID="ACGas"                />

        <forwardRate> 0.00037e-03   </forwardRate>
        <reverseRate> 0.1e-03        </reverseRate>
        <Q10>         0.2           </Q10>
    </Reaction>
    <!--2. ACGas(GTP) + ATP    <-> ACGas(GTP)ATP     -->
    <Reaction name = "ACGas+ATP--ACGasATP reac" id="ACGas+ATP--ACGasATP_id">
        <Reactant specieID="ACGas"                />
        <Reactant specieID="ATP"                    />
        <Product  specieID="ACGasATP"             />

        <forwardRate> 0.1276e-6    </forwardRate>
        <reverseRate> 0.2612e-03    </reverseRate>
        <Q10>         0.2           </Q10>
    </Reaction>
    <!--3. ACGas(GTP)ATP       <-> ACGas(GTP) + cAMP   -->
    <Reaction name = "ACGasATP--ACGas+cAMP reac" id="ACGasATP--ACGas+cAMP_id">
        <Reactant specieID="ACGasATP"             />
        <Product  specieID="ACGas"                />
        <Product  specieID="cAMP"                   />

        <forwardRate> 28.46e-03     </forwardRate>
        <reverseRate> 0.2592e-6    </reverseRate>
        <Q10>         0.2           </Q10>
    </Reaction>
    
<!-- 2a) GaiGTP + AC <-> ACGaiGTP)  Kd=96 for AC6 (160 for this rxn) source: Chen-Goodspeed JBC 280-1808, Nielson JBC 271-33308 1996 -->
    <Reaction name = "GaiGTP_AC_reac" id="GaiGTP_AC_reac">
	<Reactant specieID="GaiGTP"/>
	<Reactant specieID="AC"/>
	<Product specieID="ACGai"/>

	<forwardRate>0.0125e-3</forwardRate>
	<reverseRate>2e-3</reverseRate>
	<Q10>0.2</Q10>
    </Reaction>

<!-- 2a) GaiGTP + ACGas <-> ACGasGTP-GaiGTP)  Kd=96 for AC6 (160 for this rxn) source: Chen-Goodspeed JBC 280-18
08, Nielson JBC 271-33308 1996 -->
    <Reaction name = "GaiGTP_ACGasGTP_reac" id="GaiGTP_ACGasGTP_reac">
	<Reactant specieID="GaiGTP"/>
	<Reactant specieID="ACGas"/>
	<Product specieID="ACGasGai"/>

	<forwardRate>0.0125e-3</forwardRate>
	<reverseRate>2e-3</reverseRate>
	<Q10>0.2</Q10>
    </Reaction>
    <!-- ACGasGai + ATP    <-> ACGasGaiATP       source: Dessauer CW, Gilman AG JBC 1997-->
    <Reaction name = "ACGasGai+ATP--ACGasGaiATP" id="ACGasGai+ATP--ACGasGaiATP">
        <Reactant specieID="ACGasGai"                />
        <Reactant specieID="ATP"                    />
        <Product  specieID="ACGasGaiATP"             />

        <forwardRate> 0.01276e-6    </forwardRate>
        <reverseRate> 0.02612e-03    </reverseRate>
        <Q10>         0.2           </Q10>
    </Reaction>
    
    <!-- ACGasGTPGaiGTP_ATP       <-> ACGasGTPGaiGTP + CAMP   source:  Dessauer CW, Gilman AG JBC 1997-->
    <Reaction name = "ACGasGaiATP--ACGasGai+cAMP" id="ACGasGaiATP--ACGasGai+cAMP">
        <Reactant specieID="ACGasGaiATP"             />
        <Product  specieID="ACGasGai"                />
        <Product  specieID="cAMP"                   />

        <forwardRate> 0.2746e-03     </forwardRate>
        <reverseRate> 0.2592e-6    </reverseRate>
        <Q10>         0.2           </Q10>
    </Reaction>
    <!-- Gap activity for part of ACGasGaiATP-->
    <Reaction name = "ACGasGaiATP--ACGai+Gs+cAMP" id="ACGasGaiATP--ACGai+Gs+cAMP">
        <Reactant specieID="ACGasGaiATP"             />
        <Product  specieID="ACGai"                />
        <Product  specieID="cAMP"                   />
        <Product  specieID="GasGDP"                   />

        <forwardRate> 0.01e-03     </forwardRate>
        <reverseRate> 0.0    </reverseRate>
        <Q10>         0.2           </Q10>
    </Reaction>

<!-- Now, those involving AC with Ca attached: -->
    <!--0b. AC + Ca    <-> ACCa     (in xpp: k9=0.001 k_9=0.9), 900 nM -->
<!--    <Reaction name = "ACCa reac" id="ACCaid">
        <Reactant specieID="AC"                     />
        <Reactant specieID="Ca"                     />
        <Product  specieID="ACCa"                   />

        <forwardRate> 0.001e-03     </forwardRate>
        <reverseRate> 0.9e-03       </reverseRate>
        <Q10>         0.2           </Q10>
    </Reaction>
-->   <!--1b. GasGTP + ACCa  <-> ACGas(GTP)Ca  (slowed down from xpp: k6_2=0.0192, k_6_2=25) -->
<!--    <Reaction name = "ACGasCa reac" id="ACGasCaid">
        <Reactant specieID="GasGTP"                  />
        <Reactant specieID="ACCa"                   />
        <Product  specieID="ACGasCa"              />

        <forwardRate> 0.00037e-03 </forwardRate>
        <reverseRate> 0.1e-03        </reverseRate>
        <Q10>         0.2           </Q10>
    </Reaction>
-->    <!--2b. ACGas(GTP)Ca + ATP  <-> ACGas(GTP)CaATP      -->
<!--        <Reaction name = "ACGasCaATP reac" id="ACGasCaATP1id">
        <Reactant specieID="ACGasCa"              />
        <Reactant specieID="ATP"                    />
        <Product  specieID="ACGasCaATP"           />

        <forwardRate> 0.0638e-06 </forwardRate>
        <reverseRate> 0.1306e-03    </reverseRate>
        <Q10>         0.2           </Q10>
    </Reaction>
-->   <!--3b. ACGas(GTP)CaATP  <-> cAMP + ACGas(GTP)Ca  -->
<!--    <Reaction name = "ACGasCaATP<->cAMP+ACGasCa reac" id="ACGasCaATP2id">
        <Reactant specieID="ACGasCaATP"           />
       <Product  specieID="cAMP"                   />
        <Product  specieID="ACGasCa"              />

        <forwardRate> 14.23e-03     </forwardRate>
        <reverseRate> 0.1296e-06 </reverseRate>
        <Q10>         0.2           </Q10>
    </Reaction>
-->
<!--VI. *****************PDE1 *******************************-->
    <!--1. PDE1 + CamCa4  <-> PDE1CamCa4           (in xpp: KfpdeCam=0.1, KbpdeCam=1) -->
    <Reaction name = "PDE1+CamCa4--PDE1CamCa4" id="PDE1+CamCa4--PDE1CamCa4_id">
        <Reactant specieID="PDE1"                   />
        <Reactant specieID="CamCa4"                 />
        <Product  specieID="PDE1CamCa4"             />

        <forwardRate> 0.1e-03       </forwardRate>
        <reverseRate> 1.0e-03       </reverseRate>
        <Q10>         0.2           </Q10>
    </Reaction>
    <!-- PDE1CamCa4 + cAMP <-> PDE1CamCa4cAMP         (in xpp: KfPde1=0.0046 KbPde1=44) -->
    <Reaction name = "PDE1CamCa4+cAMP--PDE1CamCa4cAMP" id="PDE1CamCa4+cAMP--PDE1CamCa4cAMP_id">
        <Reactant specieID="PDE1CamCa4"             />
        <Reactant specieID="cAMP"                   />
        <Product  specieID="PDE1CamCa4cAMP"               />

        <forwardRate> 0.0046e-03    </forwardRate>
        <reverseRate> 44.0e-03      </reverseRate>
        <Q10>         0.2           </Q10>
    </Reaction>
    <!-- PDE1CamCa4cAMP        -> PDE1CamCa4 + AMP    (in xpp: V_Pde1=11) -->
    <Reaction name = "PDE1CamCa4cAMP--PDE1CamCa4+AMP" id="PDE1CamCa4cAMP--PDE1CamCa4+AMP_id">
        <Reactant specieID="PDE1CamCa4cAMP"               />
        <Product  specieID="PDE1CamCa4"             />
        <Product  specieID="AMP"                    />

        <forwardRate> 11.00e-03     </forwardRate>
        <reverseRate> 0.0           </reverseRate>
        <Q10>         0.2           </Q10>
    </Reaction>

<!--VII. *****************PDE10 *******************************-->
    <!--1. PDE10 + cAMP    <-> PDE10cAMP         (in xpp: KfPDE10=    KbPDE10=  ) -->
    <Reaction name = "PDE10+cAMP--PDE10cAMP" id="PDE10+cAMP--PDE10cAMP_id">
        <Reactant specieID="PDE10"                  />
        <Reactant specieID="cAMP"                   />
        <Product  specieID="PDE10cAMP"              />

        <forwardRate> 0.084e-3        </forwardRate>
        <reverseRate> 16.8e-3        </reverseRate>
        <Q10>         0.2           </Q10>
    </Reaction>
    <!--2. PDE10cAMP        -> PDE10 + AMP       (in xpp: V_PDE10=18) -->
    <Reaction name = "PDE10cAMP--PDE10+AMP" id="PDE10cAMP--PDE10+AMP_id">
        <Reactant specieID="PDE10cAMP"              />
        <Product  specieID="PDE10"                  />
        <Product  specieID="AMP"                    />

        <forwardRate> 4.2e-3         </forwardRate>
        <reverseRate> 0.0           </reverseRate>
        <Q10>         0.2           </Q10>
    </Reaction>

    <!--VIII. *****************PKAc phosphorylation of PDE10 *******************************-->
<!-- slower than previous,  based on A. Chay and cAMP decay. Km=120nM-->
    <!--1a. PKAc + PDE10 -> PKAcPDE10 -->
    <Reaction name = "PDE10 phosp1" id="phospPDE101">
        <Reactant specieID="PKAc"                   />
        <Reactant specieID="PDE10"                  />
        <Product  specieID="PKAcPDE10"              />

        <forwardRate> 0.125e-06    </forwardRate>
        <reverseRate> 0.012e-03    </reverseRate>
        <Q10>         0.2           </Q10>
    </Reaction>

    <!--2a. PKAcPDE10 -> PKAc + pPDE10 -->
    <Reaction name = "PDE10 phosp2" id="phospPDE102">
        <Reactant specieID="PKAcPDE10"              />
        <Product  specieID="pPDE10"                 />
        <Product  specieID="PKAc"                   />

        <forwardRate> 0.003e-03    </forwardRate>
        <reverseRate> 0             </reverseRate>
        <Q10>         0.2           </Q10>
    </Reaction>

   <!--1b. PKAc + PDE10cAMP -> PKAcPDE10cAMP -->
    <Reaction name = "PDE10cAMP phosp1" id="phospPDE10cAMP1">
        <Reactant specieID="PKAc"                  />
        <Reactant specieID="PDE10cAMP"             />
        <Product  specieID="PKAcPDE10cAMP"         />

        <forwardRate> 0.125e-06    </forwardRate>
        <reverseRate> 0.012e-03    </reverseRate>
        <Q10>         0.2           </Q10>
    </Reaction>

    <!--2b. PKAcPDE10cAMP -> PKAc + pPDE10cAMP -->
    <Reaction name = "PDE10cAMP phosp2" id="phospPDE10cAMP2">
        <Reactant specieID="PKAcPDE10cAMP"         />
        <Product  specieID="pPDE10cAMP"            />
        <Product  specieID="PKAc"                  />

        <forwardRate> 0.003e-03    </forwardRate>
        <reverseRate> 0             </reverseRate>
        <Q10>         0.2           </Q10>
    </Reaction>

    <!--3. pPDE10 -> PDE10 -->
    <Reaction name = "PDE10 d_phosp" id="dphospPDE10">
        <Reactant specieID="pPDE10"                 />
        <Product  specieID="PDE10"                  />

        <forwardRate>  0.005e-03    </forwardRate>
        <reverseRate>  0            </reverseRate>
        <Q10>          0.2          </Q10>
    </Reaction>

<!--IX. *****************pPDE10 activity *******************************-->
    <!--1. pPDE10 + cAMP    <-> pPDE10cAMP          -->
    <Reaction name = "pPDE10+cAMP--pPDE10cAMP" id="pPDE10+cAMP--pPDE10cAMP_id">
        <Reactant specieID="pPDE10"                 />
        <Reactant specieID="cAMP"                   />
        <Product  specieID="pPDE10cAMP"             />

        <forwardRate>  0.336e-3      </forwardRate>
        <reverseRate>  67.2e-3        </reverseRate>
        <Q10>          0.2           </Q10>
    </Reaction>

    <!--2. pPDE10cAMP        -> pPDE10 + AMP       source: -->
    <Reaction name = "pPDE10cAMP--pPDE10+AMP" id="pPDE10cAMP--pPDE10+AMP_id">
        <Reactant specieID="pPDE10cAMP"             />
        <Product  specieID="pPDE10"                 />
        <Product  specieID="AMP"                    />

        <forwardRate>  16.8e-3        </forwardRate>
        <reverseRate>  0.0          </reverseRate>
        <Q10>          0.2          </Q10>
    </Reaction>

    <!--3. AMP             -> ATP              (in xpp: katp=10) -->
    <Reaction name = "AMP--ATP" id="AMP--ATP_id">
        <Reactant specieID="AMP"                    />
        <Product  specieID="ATP"                    />

        <forwardRate> 1.00e-03      </forwardRate>
        <reverseRate> 0.0           </reverseRate>
        <Q10>         0.2           </Q10>
    </Reaction>

<!-- extra PDE, called PDE2, requires 2 cAMP binding for activity -->
<!-- PDE2 + cAMP    <-> PDE2cAMP       Km=40 uM, source: WadaJBiolChem262-5139
Not allowing this single bound form to be active -->
    <Reaction name = "PDE2+cAMP--PDE2cAMP" id="PDE2+cAMP--PDE2cAMP">
        <Reactant specieID="PDE2"                  />
        <Reactant specieID="cAMP"                   />
        <Product  specieID="PDE2cAMP"              />

        <forwardRate> 0.00002e-3        </forwardRate>
        <reverseRate> 0.5e-3        </reverseRate>
        <Q10>         0.2           </Q10>
    </Reaction>
    <!-- PDE2cGMP+cAMP        <-> PDE2cGMPcAMP -> PDE2cGMP + AMP   kD=1.0 uM, Kc
at=18x source: WadaJBiolChem262-5139   -->
    <Reaction name = "PDE2cAMP+cAMP--PDE2cAMP2" id="PDE2cAMP+cAMP--PDE2cAMP2">
        <Reactant specieID="PDE2cAMP"              />
        <Reactant specieID="cAMP"                   />
	<Product specieID="PDE2cAMP2"              />
        <forwardRate> 0.0059e-3         </forwardRate>
        <reverseRate> 0.5e-3           </reverseRate>
        <Q10>         0.2           </Q10>
    </Reaction>
  
    <Reaction name = "PDE2cAMP2--PDE2cAMP+AMP" id="PDE2cAMP2--PDE2cAMP+AMP">
	<Reactant specieID="PDE2cAMP2"              />
        <Product specieID="PDE2cAMP"              />
        <Product  specieID="AMP"                    />
        <forwardRate> 5.4e-3         </forwardRate>
        <reverseRate> 0.0           </reverseRate>
        <Q10>         0.2           </Q10>
    </Reaction>

<!-- *****************PDE4 and pPDE4 activity *******************************-->
    <!-- 15)  cAMP + PDE4  <-> PDE4cAMP -->
    <Reaction name = "PDE4 enzyme1" id="PDE4bind">
        <Reactant specieID="PDE4"           />
        <Reactant specieID="cAMP"            />
        <Product  specieID="PDE4cAMP"       />
        <forwardRate> 0.0216e-03  </forwardRate>
        <reverseRate> 68.95e-03    </reverseRate>
        <Q10>         0.2          </Q10>
    </Reaction>

    <!-- 16)  PDE4cAMP -> AMP + PDE4 -->
    <Reaction name = "PDE4 actvcomp" id="PDE4cat">
        <Reactant specieID="PDE4cAMP"       />
        <Product  specieID="PDE4"           />
        <Product  specieID="AMP"             />
        <forwardRate> 17.233e-03    </forwardRate>
        <reverseRate> 0            </reverseRate>
        <Q10>         0.2          </Q10>
    </Reaction>

    <!-- 17)  cAMP + pPDE4  <-> pPDE4cAMP -->
    <Reaction name = "pPDE4 enzyme1" id="pPDE4bind">
        <Reactant specieID="pPDE4"           />
        <Reactant specieID="cAMP"             />
        <Product  specieID="pPDE4cAMP"       />
        <forwardRate> 0.0864e-03   </forwardRate>
        <reverseRate> 275.8e-3  </reverseRate>
        <Q10>         0.2          </Q10>
    </Reaction>

    <!-- 18)  pPDE4cAMP -> AMP + pPDE4 -->
    <Reaction name = "pPDE4 actvcomp" id="pPDE4cat">
        <Reactant specieID="pPDE4cAMP"       />
        <Product  specieID="pPDE4"           />
        <Product  specieID="AMP"              />
        <forwardRate> 68.932e-3   </forwardRate>
        <reverseRate> 0            </reverseRate>
        <Q10>         0.2          </Q10>
    </Reaction>

   <!-- 19)  PKAc + PDE4 -> PKAcPDE4 -->
    <Reaction name = "PDE4 phosp1" id="phospPDE41">
        <Reactant specieID="PKAc"            />
        <Reactant specieID="PDE4"           />
        <Product  specieID="PKAcPDE4"       />
        <forwardRate> 0.125e-6  </forwardRate>
        <reverseRate> 0.04e-3    </reverseRate>
        <Q10>         0.2          </Q10>
    </Reaction>

    <!-- 20)  PKAcPDE4 -> PKAc + pPDE4 -->
    <Reaction name = "PDE4 phosp2" id="phospPDE42">
        <Reactant specieID="PKAcPDE4"       />
        <Product  specieID="pPDE4"          />
        <Product  specieID="PKAc"            />
        <forwardRate> 0.01e-3    </forwardRate>
        <reverseRate> 0            </reverseRate>
        <Q10>         0.2          </Q10>
    </Reaction>

    <!-- 23)  pPDE4 -> PDE4 -->
    <Reaction name = "PDE4 d_phosp" id="dphospPDE4">
        <Reactant specieID="pPDE4"          />
        <Product  specieID="PDE4"           />
        <forwardRate> 0.005e-03     </forwardRate>
        <reverseRate> 0            </reverseRate>
        <Q10>         0.2          </Q10>
    </Reaction>

<!--X. **************************************************************************-->
<!-- PLC, Dag, IP3, 2ag and PKC, from Gq RXN FILE --> 
<!-- Review these and check all molecule names -->

    <!--1a. Plc+Ca <-> PlcCa -->
    <Reaction name = "Plc+Ca--PlcCa" id="Plc+Ca--PlcCa">
        <Reactant specieID="Ca"           />
        <Reactant specieID="Plc"              />
        <Product  specieID="PlcCa"               />

        <forwardRate> 0.0005e-03   </forwardRate>
        <reverseRate> 1e-03        </reverseRate>
        <Q10>         0.2           </Q10>
    </Reaction>

    <!--2a. PlcCa + GaGTP    <->   PlcCaGaq  100 nM-->
    <Reaction name = "PlcCa+GaqGTP--PlcCaGaq" id="PlcCa+GaqGTP--PlcCaGaq">
        <Reactant specieID="GaqGTP"           />
        <Reactant specieID="PlcCa"              />
        <Product  specieID="PlcCaGaq"               />

        <forwardRate> 0.0035e-03   </forwardRate>
        <reverseRate> 0.7e-03        </reverseRate>
        <Q10>         0.2           </Q10>
    </Reaction>

    <!--1b. Plc + GaqGTP    <->   PlcGaq 1200 nM -->
<!--AB: Falkenburger 2010 uses 0.71e-3 for reverse rate --> 
    <Reaction name = "Plc+GaqGTP--PlcGaq" id="Plc+GaqGTP--PlcGaq">
        <Reactant specieID="GaqGTP"           />
        <Reactant specieID="Plc"              />
        <Product  specieID="PlcGaq"               />

        <forwardRate> 0.0007e-03   </forwardRate>
        <reverseRate> 0.7e-03        </reverseRate>
        <Q10>         0.2           </Q10>
    </Reaction>

    <!--2b. PlcGaq + Ca    <->   PlcCaGaq  500 nM-->
    <Reaction name = "PlcGaGTP+Ca--PlcCaGaq" id="PlcGaGTP+Ca--PlcCaGaq">
        <Reactant specieID="Ca"           />
        <Reactant specieID="PlcGaq"              />
        <Product  specieID="PlcCaGaq"               />

        <forwardRate> 0.0025e-03   </forwardRate>
        <reverseRate> 1.0e-03        </reverseRate>
        <Q10>         0.2           </Q10>
    </Reaction>


   <!--3i. PlcCa + Pip2    <-> PlcCaPip2    Possibly make these two 3x-5x faster-->
    <Reaction name = "PlcCa+Pip2--PlcCaPip2" id="PlcCa+Pip2--PlcCaPip2">
        <Reactant specieID="PlcCa"               />
        <Reactant specieID="Pip2"             />
        <Product  specieID="PlcCaPip2"            />

        <forwardRate> 0.05e-06   </forwardRate>
        <reverseRate> 1.8e-03   </reverseRate>
         <Q10>         0.2           </Q10>
    </Reaction>

    <!--4i. PlcCaPip2      <-> PlcCaDag + Ip3 -->
    <Reaction name = "PlcCaPip2--PlcCa+Dag+Ip3" id="PlcCaPip2--PlcCa+Dag+Ip3">
        <Reactant specieID="PlcCaPip2"            />
        <Product  specieID="PlcCa"               />
        <Product  specieID="Ip3"            />
        <Product  specieID="Dag"            />

        <forwardRate> 0.45e-03     </forwardRate>
        <reverseRate> 0e-03    </reverseRate>
        <Q10>         0.2           </Q10>
    </Reaction>
      
    <!--3j. PlcCaGaq + Pip2    <-> PlcCaGaqPip2   Possibly make these two 3x-5x faster -->
    <Reaction name = "PlcCaGaq+Pip2--PlcCaGaqPip2" id="PlcCaGaq+Pip2--PlcCaGaqPip2">
        <Reactant specieID="PlcCaGaq"               />
        <Reactant specieID="Pip2"             />
        <Product  specieID="PlcCaGaqPip2"            />

        <forwardRate>  1.665e-06   </forwardRate>
        <reverseRate>  60e-03   </reverseRate>
        <Q10>         0.2           </Q10>
    </Reaction>
      
    <!--4j. PlcCaGaqPip2       <-> PlcCaGaqDag + Ip3 -->
    <Reaction name = "PlcCaGaqPip2--PlcCaGaqDag+Ip3" id="PlcCaGaqPip2--PlcCaGaqDag+Ip3">
        <Reactant specieID="PlcCaGaqPip2"            />
        <Product  specieID="PlcCaGaq"               />
        <Product  specieID="Dag"            />
        <Product  specieID="Ip3"            />

        <forwardRate> 30e-03     </forwardRate>
        <reverseRate> 0e-03    </reverseRate>
        <Q10>         0.2           </Q10>
    </Reaction>
      
<!-- GAP activity - only with PLC bound not to PIP2. Make slower for stronge 2AG response?-->
    <!-- PlcGaGTP       <-> Plc + Gabg -->
    <Reaction name = "PlcGaq--Plc+GaqGDP" id="PlcGaq--Plc+GaqGDP">
        <Reactant specieID="PlcGaq"            />
        <Product  specieID="Plc"               />
        <Product  specieID="GaqGDP"            />

        <forwardRate>   12e-03   </forwardRate>
        <reverseRate>   0  </reverseRate>
        <Q10>         0.2           </Q10>
    </Reaction>

<!-- Gap activity of PlcCa.  Make slower for stronge 2AG response?-->
    <Reaction name = "PlcCaGaq--PlcCa+GaGDP" id="PlcCaGaq--Plc+GaGDP">
        <Reactant specieID="PlcCaGaq"            />
        <Product  specieID="PlcCa"               />
        <Product  specieID="GaqGDP"            />

        <forwardRate>   12e-03   </forwardRate>
        <reverseRate>   0  </reverseRate>
        <Q10>         0.2           </Q10>
    </Reaction>

    <!-- Ca + Dgl <-> CaDgl   Dgl is DAG lipase, which produces 2AG -->
    <!-- no source for rates.  Make 400 nM affinity -->
    <Reaction name = "Ca+Dlg--CaDgl" id="Ca+Dlg--CaDgl">
        <Reactant specieID="Ca"            />
        <Reactant specieID="Dgl"               />
        <Product  specieID="CaDgl"            />

        <forwardRate> 0.125e-03     </forwardRate>
        <reverseRate> 50e-03    </reverseRate>
        <Q10>         0.2           </Q10>
    </Reaction>
 
    <!-- Dag + CaDgl <-> DagCaDgl -->
    <!--affinity dec to 2500 nM   -->
    <Reaction name = "Dag+CaDlg--DagCaDgl" id="Dag+CaDlg--DagCaDgl">
        <Reactant specieID="Dag"            />
        <Reactant specieID="CaDgl"               />
        <Product  specieID="DagCaDgl"            />

        <forwardRate> 0.0005e-03     </forwardRate>
        <reverseRate> 1.0e-03    </reverseRate>
        <Q10>         0.2           </Q10>
    </Reaction>

    <!-- DagCaDgl <-> CaDgl + 2ag -->
    <!-- kcat from Rosenburger Lipids 2007 -->
    <Reaction name = "DagCaDgl--CaDgl+2ag" id="DagCaDgl--CaDgl+2ag">
        <Reactant specieID="DagCaDgl"            />
        <Product  specieID="CaDgl"               />
        <Product  specieID="2ag"            />

        <forwardRate> 0.25e-03     </forwardRate>
        <reverseRate> 0e-03    </reverseRate>
        <Q10>         0.2           </Q10>
    </Reaction>

<!-- ************* degradation of IP3 and 2AG, implementing the enzymes? -->
    <!--  Ip3    <-> Ip3degrad         rate from IP3deg from Xu watras Loew J Cell science 2003 -->
    <Reaction name = "Ip3--Ip3degrad" id="Ip3--Ip3degrad">
         <Reactant specieID="Ip3"            />
        <Product  specieID="Ip3degrad"        />

        <forwardRate> 0.1e-03      </forwardRate>
        <reverseRate> 0.0e-03      </reverseRate>
        <Q10>         0.2           </Q10>
    </Reaction>

   <!-- previously unlabeled IP3 degradation rxn -->
   <Reaction name = "Ip3degrad+PIkinase--Ip3degPIk" id="PIkinase1">
        <Reactant specieID="Ip3degrad"            />   
        <Reactant  specieID="PIkinase"               />
        <Product  specieID="Ip3degPIk"            />

        <forwardRate> 0.0005e-3    </forwardRate>
        <reverseRate> 0.4e-03    </reverseRate>
        <Q10>         0.2           </Q10>
    </Reaction>

<!-- rate from PIP2synth from Xu watras Loew J Cell science 2003 -->
   <Reaction name = "Ip3degPIk--PIP2 + PIkinase" id="PIkinase2">
        <Reactant specieID="Ip3degPIk"            />
        <Product  specieID="PIkinase"               />
        <Product  specieID="Pip2"            />

        <forwardRate> 0.1e-3  </forwardRate>
        <reverseRate> 0e-3    </reverseRate>
        <Q10>         0.2           </Q10>
    </Reaction>    

    <!--  2ag    <-> 2agDegrad       Degraded 2AG   -->
    <Reaction name = "2ag--2agDegrad" id="2ag--2agDegrad">
         <Reactant specieID="2ag"            />
        <Product  specieID="2agDegrad"        />

        <forwardRate> 0.25e-03      </forwardRate>
        <reverseRate> 0.0e-03      </reverseRate>
        <Q10>         0.2           </Q10>
    </Reaction>

	<!-- ************* degradation of  DAG by DAG kinase -->
     <!--  Dag   + DagK <-> DagKdag -> PA  step 1  (Km = 2 mol% Shulga et al. FEBS letters -->
    <Reaction name = "DagKdag1" id="DagKdag1">
         <Reactant specieID="Dag"            />
         <Reactant specieID="DagK"            />
        <Product  specieID="DagKdag"        />

        <forwardRate> 0.00007e-03      </forwardRate>
        <reverseRate> 0.8e-3         </reverseRate>
        <Q10>         0.2           </Q10>
    </Reaction>

    <!--  Dag   + DagK <-> DagKdag -> PA   step 2 -->
    <Reaction name = "DagKdag1" id="DagKdag1">
         <Reactant specieID="DagKdag"            />
        <Product  specieID="PA"        />
        <Product  specieID="DagK"        />

        <forwardRate> 0.2e-03      </forwardRate>
        <reverseRate> 0.0e-03      </reverseRate>
        <Q10>         0.2           </Q10>
    </Reaction>


<!-- These are values from Hellgren Kotaleski PKC paper. 2.5 uM affinity -->
    <!-- Pkc + Ca    <->   PkcCa  -->
    <Reaction name = "Pkc+Ca--PkcCa" id="Pkc+Ca--PkcCa">
        <Reactant specieID="Ca"           />
        <Reactant specieID="Pkc"              />
        <Product  specieID="PkcCa"               />

        <forwardRate> 0.020e-03   </forwardRate>
        <reverseRate> 50e-03        </reverseRate>
        <Q10>         0.2           </Q10>
    </Reaction>
 
<!-- THese are values from Hellgren Kotaleski PKC paper. 10 uM affinity
MUCH slower binding compared to CaDgl  -->
   <!-- PkcCa + Dag    <-> PkcCaDag    -->
    <Reaction name = "PkcCa+Dag--PkcCaDag" id="PkcCa+Dag--PkcCaDag">
        <Reactant specieID="PkcCa"               />
        <Reactant specieID="Dag"             />
        <Product  specieID="PkcCaDag"            />

        <forwardRate> 0.015e-06   </forwardRate>
        <reverseRate>  0.15e-03   </reverseRate>
        <Q10>         0.2           </Q10>
    </Reaction>

<!-- ***************************************************************************-->
<!--XI. PP2B, PP2A, PKA, Darpp32, CaMKII from Gs RXN FILE -->
<!-- ******* PKA from Asia Hippo Model ********* -->     
    <!--1) PKA + 2cAMP <-> PKAcAMP2 -->
    <Reaction name = "PKA_bind" id="PKA_bind">
	<Reactant specieID="PKA"/>
        <Reactant specieID="cAMP" n="2"/>
	<Product specieID="PKAcAMP2"/>


        <forwardRate>0.260868e-06</forwardRate>
	<reverseRate>0.060e-03</reverseRate>
	<Q10>0.2</Q10>
    </Reaction>

    <!--2) PKAcAMP2 + 2cAMP <-> PKAcAMP4 -->
    <Reaction name = "PKAcAMP2_bind" id="PKAcAMP2_bind">
	<Reactant specieID="PKAcAMP2"/>
        <Reactant specieID="cAMP" n="2"/>
	<Product specieID="PKAcAMP4"/>

	<forwardRate>0.346218e-06</forwardRate>
	<reverseRate>0.6e-3</reverseRate>
	<Q10>0.2</Q10>
    </Reaction>

<!--3) PKAcAMP4 <-> 2PKAr(as dimer) + 2PKAc(monomers) -->
    <Reaction name = "PKAcAMP4_diss" id="PKAcAMP4_diss">
	<Reactant specieID="PKAcAMP4"/>
	<Product specieID="PKAr"/>
	<Product specieID="PKAc" n="2"/>  

	<forwardRate>0.048e-03</forwardRate>
	<reverseRate>0.0051e-03</reverseRate>
	<Q10>0.2</Q10>
    </Reaction>

<!-- Cam or CamC2N or CamC2C or CamCa4 binding to PP2B.  Check rates for microscopic reversibility -->
     <!--4x) Cam    +   PP2B     <->  PP2BCam     (in xpp: k33a=1 k_33a=3)  -->
    <Reaction name = "Cam+PP2B--PP2BCam reac" id="Cam+PP2B--PP2BCam_id">
        <Reactant specieID="Cam"                    />
        <Reactant specieID="PP2B"                   />
        <Product  specieID="PP2BCam"                />

        <forwardRate> 0.0046e-3       </forwardRate>
        <reverseRate> 0.0012e-3      </reverseRate>
        <Q10>         0.2           </Q10>
    </Reaction>

    <!--4C) CamCa2C    +   PP2B     <->  PP2BCamCa2C (in xpp: k33c=1 k_33c=0.3) -->
    <Reaction name = "CamCa2C+PP2B--PP2BCamCa2C reac" id="CamCa2C+PP2B--PP2BCamCa2C_id">
        <Reactant specieID="CamCa2C"                 />
        <Reactant specieID="PP2B"                   />
        <Product  specieID="PP2BCamCa2C"             />

        <forwardRate> 0.046e-3       </forwardRate>
        <reverseRate> 0.0012e-3      </reverseRate>
        <Q10>         0.2            </Q10>
    </Reaction>

    <!--4N) CamCa2N    +   PP2B     <->  PP2BCamCa2N (in xpp: k33c=1 k_33c=0.3) -->
    <Reaction name = "CamCa2N+PP2B--PP2BCamCa2N reac" id="CamCa2N+PP2B--PP2BCamCa2N_id">
        <Reactant specieID="CamCa2N"                 />
        <Reactant specieID="PP2B"                   />
        <Product  specieID="PP2BCamCa2N"             />

        <forwardRate> 0.046e-3       </forwardRate>
        <reverseRate> 0.0012e-3      </reverseRate>
        <Q10>         0.2            </Q10>
    </Reaction>

    <!--5xC) PP2BCam    +   Ca2      <->  PP2BCamCa2C -->
    <Reaction name = "PP2BCam+Ca2--PP2BCamCa2C reac" id="PP2BCam+Ca2--PP2BCamCa2C_id">
        <Reactant specieID="PP2BCam"                />
        <Reactant specieID="Ca"        n="2"        />
        <Product  specieID="PP2BCamCa2C"             />

        <forwardRate> 6.0e-06       </forwardRate>
        <reverseRate> 0.91e-03      </reverseRate>
        <Q10>         0.2           </Q10>
    </Reaction>

    <!--5xN) PP2BCam    +   Ca2      <->  PP2BCamCa2N -->
    <Reaction name = "PP2BCam+Ca2--PP2BCamCa2N reac" id="PP2BCam+Ca2--PP2BCamCa2N_id">
        <Reactant specieID="PP2BCam"                />
        <Reactant specieID="Ca"        n="2"        />
        <Product  specieID="PP2BCamCa2N"             />

        <forwardRate> 0.1e-03       </forwardRate>
        <reverseRate> 100e-03      </reverseRate>
        <Q10>         0.2           </Q10>
    </Reaction>

    <!--7x) CamCa4    +  PP2B     <->  PP2BCamCa4 -->
    <Reaction name = "CamCa4+PP2B--PP2BCamCa4 reac" id="CamCa4+PP2B--PP2BCamCa4_id">
        <Reactant specieID="CamCa4"                 />
        <Reactant specieID="PP2B"                   />
        <Product  specieID="PP2BCamCa4"             />

        <forwardRate> 0.046e-3       </forwardRate>
        <reverseRate> 0.0012e-3      </reverseRate>
        <Q10>         0.2            </Q10>
    </Reaction>

  <!-- PP2BCamCa2 +  Ca2     <->  PP2BCamCa4, either N site or C site -->
    <!--4N) N site binding -->
    <Reaction name = "PP2BCamCa2C+Ca2--PP2BCamCa4 reac" id="PP2BCamCa2+Ca2--PP2BCamCa4_id">
        <Reactant specieID="PP2BCamCa2C"             />
        <Reactant specieID="Ca"        n="2"        />
        <Product  specieID="PP2BCamCa4"             />

        <forwardRate> 0.1e-03       </forwardRate>
        <reverseRate> 1000e-03      </reverseRate>
        <Q10>         0.2           </Q10>
    </Reaction>

    <!--4C) C site binding -->
    <Reaction name = "PP2BCamCa2N+Ca2--PP2BCamCa4 reac" id="PP2BCamCa2N+Ca2--PP2BCamCa4_id">
        <Reactant specieID="PP2BCamCa2N"             />
        <Reactant specieID="Ca"        n="2"        />
        <Product  specieID="PP2BCamCa4"             />

        <forwardRate> 6.0e-06       </forwardRate>
        <reverseRate> 9.1e-03      </reverseRate>
        <Q10>         0.2           </Q10>
    </Reaction>

   <!--PKAc + PP2AB56d    <->  PKAcPP2AB56d    Km=172nM  (in xpp: k27=0.0025 k_27=0.3) -->
    <Reaction name = "PKAc+PP2A--PKAcPP2AB56d reac" id="PKAc+PP2A--PKAcPP2AB56d_id">
        <Reactant specieID="PP2AB56d"          />
        <Reactant specieID="PKAc"               />
        <Product  specieID="PKAcPP2AB56d"      />

        <forwardRate> 0.0025e-03      </forwardRate>
        <reverseRate> 0.37e-03         </reverseRate>
        <Q10>         0.2             </Q10>
    </Reaction>

    <!--PKAcPP2AB56d        ->  PKAc + pPP2A(_B56d)   (in xpp: v27=0.1) -->
    <Reaction name = "PKAcPP2AB56d--PKAc+pPP2A reac" id="PKAcPP2AB56d--PKAc+pPP2A_id">
        <Reactant specieID="PKAcPP2AB56d"  />
        <Product  specieID="PKAc"           />
        <Product  specieID="pPP2A"          />

        <forwardRate> 0.06e-03         </forwardRate>
        <reverseRate> 0.0             </reverseRate>
        <Q10>         0.2             </Q10>
    </Reaction>

    <!--pPP2A(_B56d)           ->  PP2AB56d           (in xpp: v28=0.004) -->
    <Reaction name = "pPP2A--PP2A reac" id="pPP2A--PP2Aid">
        <Reactant specieID="pPP2A"          />
        <Product  specieID="PP2AB56d"      />

        <forwardRate> 0.02e-03       </forwardRate>
        <reverseRate> 0.0             </reverseRate>
        <Q10>         0.2             </Q10>
    </Reaction>

    <!--PP2ABPR72  + Ca         ->  PP2AC(_BPR72)      (in xpp: kf4=0.022, kb4=0.11)  -->
    <!-- binding updated from paper measuring binding -->
    <Reaction name = "PP2ABPR72+Ca--PP2AC reac" id="PP2AC3+Ca--PP2AC_id">
        <Reactant specieID="PP2ABPR72"         />
        <Reactant specieID="Ca"                 />
        <Product  specieID="PP2AC"              />

        <forwardRate> 0.02e-6         </forwardRate>
        <reverseRate> 0.1e-3           </reverseRate>
        <Q10>         0.2              </Q10>
    </Reaction>

    <!-- D32 + PKAc    <-> D32PKA      Km=3.7uM    (in xpp: k20=0.0027 k_20=8 v20=2, Kd=) -->
    <Reaction name = "D32+PKAc--D32PKA reac" id="D32+PKAc--D32PKA_id">
        <Reactant specieID="D32"                    />
        <Reactant specieID="PKAc"                   />
        <Product  specieID="D32PKA"                 />

        <forwardRate> 0.0027e-03      </forwardRate>
        <reverseRate> 8.0e-03         </reverseRate>
        <Q10>         0.2             </Q10>
    </Reaction>

    <!-- D32PKA            -> PKAc + Dp34  (in xpp: v20=2) -->
    <Reaction name = "D32PKA--PKAc+Dp34 reac" id="D32PKA--PKAc+Dp34_id">
        <Reactant specieID="D32PKA"                 />
        <Product  specieID="PKAc"                   />
        <Product  specieID="Dp34"                   />

        <forwardRate> 2.0e-03         </forwardRate>
        <reverseRate> 0.0             </reverseRate>
        <Q10>         0.2             </Q10>
    </Reaction>

    <!-- Dp34 + PP1    <-> Dp34PP1       (in xpp: k21=0.4 k_21=0.58, Kd=) -->
    <Reaction name = "Dp34+PP1--Dp34pp1 reac" id="Dp34+PP1--Dp34pp1_id">
        <Reactant specieID="Dp34"                   />
        <Reactant specieID="PP1"                    />
        <Product  specieID="Dp34PP1"                />

        <forwardRate> 0.4e-03         </forwardRate>
        <reverseRate> 0.58e-03        </reverseRate>
        <Q10>         0.2             </Q10>
    </Reaction>

    <!-- ******* PP2B dephos of DARPP32 *********** -->
    <!-- Dp34 + PP2BCamCa4  <-> Dp34PP2BCamCa4   King et al. 1984 Km=1.6uM -->
    <Reaction name = "Dp34+PP2BCamCa4--Dp34PP2BCamCa4 reac" id="Dp34+PP2BCamCa4--Dp34PP2BCamCa4_id">
        <Reactant specieID="Dp34"                   />
        <Reactant specieID="PP2BCamCa4"             />
        <Product  specieID="Dp34PP2BCamCa4"         />

        <forwardRate> 1.5e-06       </forwardRate>
        <reverseRate> 2.0e-03         </reverseRate>
        <Q10>         0.2             </Q10>
    </Reaction>

    <!-- Dp34PP2BCamCa4     -> D32 + PP2BCamCa4   King, Hemmings: Vmax =0.2-1/sec-->
    <Reaction name = "Dp34PP2BCamCa4--PP2BCamCa4+D32 reac" id="Dp34PP2BCamCa4--PP2BCamCa4+D32_id">
        <Reactant specieID="Dp34PP2BCamCa4"         />
        <Product  specieID="PP2BCamCa4"             />
        <Product  specieID="D32"                    />

        <forwardRate> 0.5e-03         </forwardRate>
        <reverseRate> 0.0             </reverseRate>
        <Q10>         0.2             </Q10>
    </Reaction>

    <!-- Dp34PP1 + PP2BCamCa4    <-> Dp34PP1PP2BCamCa4  (in xpp: k36=0.001 k_36=2, Kd=2.5 uM) -->
    <Reaction name = "Dp34PP1+PP2BCamCa4--Dp34PP1PP2BCamCa4 reac" id="Dp34pp1+PP2BCamCa4--Dp34PP1PP2BCamCa4_id">
        <Reactant specieID="Dp34PP1"                />
        <Reactant specieID="PP2BCamCa4"             />
        <Product  specieID="Dp34PP1PP2BCamCa4"      />

        <forwardRate> 1.5e-06      </forwardRate>
        <reverseRate> 2.0e-03       </reverseRate>
        <Q10>         0.2             </Q10>
    </Reaction>

    <!-- Dp34PP1PP2BCamCa4        -> PP1PP2BCamCa4  +  D32  (in xpp: v36=0.5) -->
    <Reaction name = "Dp34PP1PP2BCamCa4--PP1+PP2BCamCa4+D32 reac" id="Dp34PP1PP2BCamCa4--PP1+PP2BCamCa4+D32_id">
        <Reactant specieID="Dp34PP1PP2BCamCa4"      />
        <Product  specieID="PP2BCamCa4"             />
        <Product  specieID="PP1"                    />
        <Product  specieID="D32"                    />

        <forwardRate> 0.5e-03      </forwardRate>
        <reverseRate> 0.0             </reverseRate>
        <Q10>         0.2             </Q10>
    </Reaction>

    <!-- ******* PP2A dephos of DARPP32 *********** -->
    <!-- Dp34 + PP2ABPR72    <-> Dp34PP2ABPR72       (in xpp: k22b=0.0001 k_22b=2, Kd=) -->
    <!-- these are ~15x faster than xpp model, slower than Oliveira -->
    <!-- rates taken from StriatumCRCNS/StochasticSP1/PKAspace/MSPNreactionsPP2AslowPKAdiff.xml  -->
     <Reaction name = "Dp34+PP2ABPR72--Dp34PP2ABPR72 reac" id="Dp34+PP2ABPR72--Dp34PP2ABPR72_id">
        <Reactant specieID="Dp34"                   />
        <Reactant specieID="PP2ABPR72"             />
        <Product  specieID="Dp34PP2ABPR72"         />

        <forwardRate> 1.52e-06        </forwardRate>
        <reverseRate> 0.056           </reverseRate>
        <Q10>         0.2             </Q10>
    </Reaction>

    <!-- Dp34PP2ABPR72            -> D32 + PP2ABPR72  (in xpp: v22b=0.5) -->
    <Reaction name = "Dp34PP2ABPR72--PP2ABPR72+D32 reac" id="Dp34PP2ABPR72--PP2ABPR72+D32_id">
        <Reactant specieID="Dp34PP2ABPR72"         />
        <Product  specieID="PP2ABPR72"             />
        <Product  specieID="D32"                    />

        <forwardRate> 0.014           </forwardRate>
        <reverseRate> 0.0             </reverseRate>
        <Q10>         0.2             </Q10>
    </Reaction>

    <!-- Dp34 + PP2AB56d    <-> Dp34PP2AB56d       (in xpp: k22b=0.0001 k_22b=2, Kd=) -->
    <!-- these are ~15x faster than xpp model #######, slower than Oliveira -->
    <!-- rates taken from StriatumCRCNS/StochasticSP1/PKAspace/MSPNreactionsPP2AslowPKAdiff.xml  -->
    <Reaction name = "Dp34+PP2AB56d--Dp34PP2AB56d reac" id="Dp34+PP2AB56d--Dp34PP2AB56d_id">
        <Reactant specieID="Dp34"                   />
        <Reactant specieID="PP2AB56d"              />
        <Product  specieID="Dp34PP2AB56d"          />

        <forwardRate> 1.52e-06        </forwardRate>
        <reverseRate> 0.056           </reverseRate>
        <Q10>         0.2             </Q10>
    </Reaction>

    <!-- Dp34PP2AB56d            -> D32 + PP2AB56d  (in xpp: v22b=0.5) -->
    <Reaction name = "Dp34PP2AB56d--PP2AB56d+D32 reac" id="Dp34PP2AB56d--PP2AB56d+D32_id">
        <Reactant specieID="Dp34PP2AB56d"          />
        <Product  specieID="PP2AB56d"              />
        <Product  specieID="D32"                    />

        <forwardRate> 0.014           </forwardRate>
        <reverseRate> 0.0             </reverseRate>
        <Q10>         0.2             </Q10>
    </Reaction>

    <!-- Dp34pp1 + PP2ABPR72  <-> Dp34PP1PP2ABPR72 -> D32 + PP1 + PP2ABPR72  (in xpp: k36b=0.0001 k_36b=2, Kd=) -->
    <Reaction name = "Dp34pp1+PP2ABPR72--Dp34PP1PP2ABPR72 reac" id="Dp34pp1+PP2ABPR72--Dp34PP1PP2ABPR72_id">
        <Reactant specieID="Dp34PP1"                 />
        <Reactant specieID="PP2ABPR72"              />
        <Product  specieID="Dp34PP1PP2ABPR72"       />

        <forwardRate> 0.3e-06        </forwardRate>
        <reverseRate> 0.0122          </reverseRate>
        <Q10>         0.2              </Q10>
    </Reaction>

    <!-- Dp34PP1PP2ABPR72          -> PP1PP2ABPR72 + D32 (in xpp: v36b=0.5) -->
    <Reaction name = "Dp34PP1PP2ABPR72--PP1+PP2ABPR72+D32 reac" id="Dp34PP1PP2ABPR72--PP1+PP2ABPR72+D32_id">
        <Reactant specieID="Dp34PP1PP2ABPR72"      />
        <Product  specieID="PP2ABPR72"             />
	<Product  specieID="PP1"                    />
        <Product  specieID="D32"                    />

        <forwardRate> 0.0028          </forwardRate>
        <reverseRate> 0.0             </reverseRate>
        <Q10>         0.2             </Q10>
    </Reaction>

    <!-- Dp34pp1 + PP2AB56d  <-> Dp34PP1PP2AB56d -> D32 + PP1 + PP2AB56d   -->
    <Reaction name = "Dp34pp1+PP2AB56d--Dp34PP1PP2AB56d reac" id="Dp34pp1+PP2AB56d--Dp34PP1PP2AB56d_id">
        <Reactant specieID="Dp34PP1"                />
        <Reactant specieID="PP2AB56d"              />
        <Product  specieID="Dp34PP1PP2AB56d"       />

        <forwardRate> 0.3e-06        </forwardRate>
        <reverseRate> 0.0122          </reverseRate>
        <Q10>         0.2              </Q10>
    </Reaction>

    <!-- Dp34PP1PP2AB56d          -> PP1PP2AB56d + D32 (in xpp: v36b=0.5) -->
    <Reaction name = "Dp34PP1PP2AB56d--PP1+PP2AB56d+D32 reac" id="Dp34PP1PP2AB56d--PP1+PP2AB56d+D32_id">
        <Reactant specieID="Dp34PP1PP2AB56d"       />
        <Product  specieID="PP2AB56d"              />
        <Product  specieID="PP1"                    />
        <Product  specieID="D32"                    />

        <forwardRate> 0.0028         </forwardRate>
        <reverseRate> 0.0             </reverseRate>
        <Q10>         0.2             </Q10>
    </Reaction>

<!-- phos D32 on T75, which then inhibits PKAc -->
    <!-- Cdk5   +   D32  <->    Cdk5D32     (in xpp: k23=0.00045 k_23=2) -->
    <Reaction name = "Cdk5+D32--Cdk5D32 reac" id="Cdk5+D32--Cdk5D32_id">
        <Reactant specieID="Cdk5"               />
        <Reactant specieID="D32"                />
        <Product  specieID="Cdk5D32"            />

        <forwardRate> 0.0045e-03     </forwardRate>
        <reverseRate> 40e-3        </reverseRate>
        <Q10>         0.2             </Q10>
    </Reaction>

    <!-- Cdk5D32        -> Dp75 + Cdk5 (in xpp: v23=0.5) -->
    <!-- rates and quantities adjusted to achieve 10 uM Dp75 at basal -->
    <Reaction name = "Cdk5D32--Dp75+Cdk5 reac" id="Cdk5D32--Dp75+Cdk5_id">
        <Reactant specieID="Cdk5D32"            />
        <Product  specieID="Dp75"               />
        <Product  specieID="Cdk5"               />

        <forwardRate> 10e-3         </forwardRate>
        <reverseRate> 0.0             </reverseRate>
        <Q10>         0.2             </Q10>
    </Reaction>

    <!--Dp75  +  PKAc  <->  DP75PKA   (in xpp: k24=0.00037 k_24=1) Kd=2.7uM -->
    <Reaction name = "Dp75+PKAc--Dp75PKA reac" id="Dp75+PKAc--Dp75PKA_id">
        <Reactant specieID="Dp75"               />
        <Reactant specieID="PKAc"               />
        <Product  specieID="Dp75PKA"               />

        <forwardRate> 0.00037e-03     </forwardRate>
        <reverseRate> 1.0e-03         </reverseRate>
        <Q10>         0.2             </Q10>
    </Reaction>

<!-- dephos of Dp75 on PP2A(both BPR75 and B56d), phosphoPP2A, and Ca bound PP2A -->
    <!--Dp75 + pPP2A(_B56d) <-> Dp75pPP2A(_B56d)  (must faster than in xpp: k25=0.0004 k_25=12)-->
    <Reaction name = "Dp75+pPP2A--Dp75pPP2A reac" id="Dp75+pPP2A--Dp75pPP2Aid">
        <Reactant specieID="Dp75"           />
        <Reactant specieID="pPP2A"          />
        <Product  specieID="Dp75pPP2A"       />

        <forwardRate> 0.015e-03        </forwardRate>
        <reverseRate> 168e-3          </reverseRate>
        <Q10>         0.2             </Q10>
    </Reaction>

    <!--Dp75pPP2A(_B56d)        -> D32  + pPP2A(_B56d) (in xpp: v25=3) -->
    <Reaction name = "Dp75pPP2A--D32+pPP2A reac" id="Dp75pPP2A--D32+pPP2Aid">
        <Reactant specieID="Dp75pPP2A"       />
        <Product  specieID="D32"            />
        <Product  specieID="pPP2A"          />

        <forwardRate> 42e-3           </forwardRate>
        <reverseRate> 0.0             </reverseRate>
        <Q10>         0.2             </Q10>
    </Reaction>

    <!--Dp75 + PP2ABPR72 <-> Dp75PP2ABPR72   (much faster than in xpp: k26=0.0001 k_26=6.4) -->
     <Reaction name = "Dp75+PP2ABPR72--Dp75PP2ABPR72 reac" id="Dp75+PP2ABPR72--Dp75PP2ABPR72_id">
        <Reactant specieID="Dp75"                   />
        <Reactant specieID="PP2ABPR72"             />
        <Product  specieID="Dp75PP2ABPR72"         />

        <forwardRate> 0.0023e-3          </forwardRate>
        <reverseRate> 84e-3           </reverseRate>
        <Q10>         0.2             </Q10>
    </Reaction>

    <!--Dp75PP2ABPR72        -> D32  + PP2ABPR72       (in xpp: v26=1.6) -->
    <Reaction name = "Dp75PP2ABPR72--D32+PP2ABPR72 reac" id="Dp75PP2ABPR72--D32+PP2ABPR72_id">
        <Reactant specieID="Dp75PP2ABPR72"         />
        <Product  specieID="D32"                    />
        <Product  specieID="PP2ABPR72"             />

        <forwardRate> 21e-3           </forwardRate>
        <reverseRate> 0.0             </reverseRate>
        <Q10>         0.2             </Q10>
    </Reaction>

    <!--Dp75 + PP2AB56d <-> Dp75PP2AB56d   (must faster than in xpp: k26=0.0001 k_26=6.4) -->
     <Reaction name = "Dp75+PP2AB56d--Dp75PP2AB56d reac" id="Dp75+PP2AB56d--Dp75PP2AB56d_id">
        <Reactant specieID="Dp75"                   />
        <Reactant specieID="PP2AB56d"              />
        <Product  specieID="Dp75PP2AB56d"          />

        <forwardRate> 0.0023e-3          </forwardRate>
        <reverseRate> 84e-3           </reverseRate>
        <Q10>         0.2             </Q10>
    </Reaction>

    <!--Dp75PP2AB56d        -> D32  + PP2AB56d       (in xpp: v26=1.6) -->
    <Reaction name = "Dp75PP2AB56d--D32+PP2AB56d reac" id="Dp75PP2AB56d--D32+PP2AB56d_id">
        <Reactant specieID="Dp75PP2AB56d"          />
        <Product  specieID="D32"                    />
        <Product  specieID="PP2AB56d"              />

        <forwardRate> 21e-3           </forwardRate>
        <reverseRate> 0.0             </reverseRate>
        <Q10>         0.2             </Q10>
    </Reaction>

    <!--Dp75  +  PP2AC(_BPR72) -> Dp75PP2AC(_BPR72)  (must faster than in xpp: k25c=0.0004 k_25c=12 v25c=3) -->
     <Reaction name = "Dp75+PP2AC--Dp75PP2AC reac" id="Dp75+PP2AC--Dp75PP2A_id">
        <Reactant specieID="Dp75"               />
        <Reactant specieID="PP2AC"              />
        <Product  specieID="Dp75PP2AC"           />

        <forwardRate> 0.015e-03        </forwardRate>
        <reverseRate> 168e-3           </reverseRate>
        <Q10>         0.2             </Q10>
    </Reaction>

    <!--Dp75PP2AC(_BPR72)  ->  D32 +  PP2AC(_BPR72) -->
    <Reaction name = "Dp75PP2AC-D32+PP2AC reac" id="Dp75PP2AC-D32+PP2AC_id">
        <Reactant specieID="Dp75PP2AC"           />
        <Product  specieID="PP2AC"              />
        <Product  specieID="D32"                />

        <forwardRate> 42e-3           </forwardRate>
        <reverseRate> 0.0             </reverseRate>
        <Q10>         0.2             </Q10>
    </Reaction>


    <!--XII. *************** CamKII ************* ReDo/simplify with higher order Rxn-->

  <!--1) CamCa4 + CK <-> CKCamCa4  -->
    <Reaction name = "CK bind" id="CK_bind">
        <Reactant specieID="CamCa4"                 />
        <Reactant specieID="CK"                     />
        <Product  specieID="CKCamCa4"               />

        <forwardRate> 0.01e-3   </forwardRate>
        <reverseRate> 3e-3      </reverseRate>
        <!--0.8 from ode file
	    reverseRate> 0.8e-3      </reverseRate-->
        <Q10>    0.2            </Q10>
    </Reaction>

<!--2a) 3 CKCamCa4 + 1 CKCamCa4 <-> 3  CKCamCa4 + 1 CKpCamCa4-->
    <Reaction name = "CKCam bind" id="CKCam_bind">
        <Reactant specieID="CKCamCa4"  power="4"        />
        <Product  specieID="CKCamCa4"   power="3"         />
        <Product  specieID="CKpCamCa4"           />

        <forwardRate> 13.0e-18 </forwardRate>
        <reverseRate> 0e-3     </reverseRate>
        <Q10>     2             </Q10>
    </Reaction>

<!--2b)  2 CKCamCa4 + 1 CKCamCa4 <-> 2 CKCamCa4 + 1 CKpCamCa4-->
    <Reaction name = "CKCam bind" id="CKCam_bind">
        <Reactant specieID="CKCamCa4"  power="3"        />
        <Product  specieID="CKCamCa4"  power="2"         />
        <Product  specieID="CKpCamCa4"           />

        <forwardRate> 2.0e-12 </forwardRate>
        <reverseRate> 0e-3     </reverseRate>
        <Q10>     2             </Q10>
    </Reaction>

<!--2c)  2 CKpCamCa4 + 2 CKCamCa4 <-> 3 CKpCamCa4 + 1 CKCamCa4-->
    <Reaction name = "CKCam bind" id="CKCam_bind">
        <Reactant specieID="CKpCamCa4"  power="2"        />
        <Reactant specieID="CKCamCa4"  power="2"        />
        <Product  specieID="CKCamCa4"           />
        <Product  specieID="CKpCamCa4" power="3"         />

        <forwardRate> 27.1e-18 </forwardRate>
        <reverseRate> 0e-3     </reverseRate>
        <Q10>     2             </Q10>
    </Reaction>

  <!-- CKpCamCamCa4 <-> CKp + CamCa4 -->
    <Reaction name = "CKp auto" id="CKp_auto">
        <Reactant specieID="CKpCamCa4"              />
        <Product  specieID="CamCa4"                 />
        <Product  specieID="CKp"                    />

        <forwardRate> 0.0008e-3 </forwardRate>
        <reverseRate> 0.01e-3   </reverseRate>
        <Q10>    0.2            </Q10>
    </Reaction>

    <!-- CKp + PP1 <-> CKpPP1 -->
    <Reaction name = "CKp bind" id="CKp_bind">
        <Reactant specieID="CKp"                    />
        <Reactant specieID="PP1"                    />
        <Product  specieID="CKpPP1"                 />

        <forwardRate> 0.01e-06     </forwardRate>
        <reverseRate> 0.085e-03   </reverseRate>
        <Q10>     0.2             </Q10>
    </Reaction>
 
    <!-- CKpPP1 -> PP1 + CK -->
    <Reaction name = "CKpPP1 reac" id="CKpPP1_reac">
        <Reactant specieID="CKpPP1"                 />
        <Product specieID="PP1"                     />
        <Product specieID="CK"                      />

        <forwardRate> 0.025e-03   </forwardRate>
        <reverseRate> 0.0         </reverseRate>
        <Q10>    0.2              </Q10>
    </Reaction>

    <!-- CKpCamCa4 + PP1 <-> CKpCamCa4PP1 -->
    <Reaction name = "CKpCamCa4PP1_bind" id="CKpCamPP1_bind">
        <Reactant specieID="CKpCamCa4"              />
        <Reactant specieID="PP1"                    />
        <Product  specieID="CKpCamCa4PP1"           />

        <forwardRate> 0.0         </forwardRate>
        <reverseRate> 0.0         </reverseRate>
        <Q10>    0.2              </Q10>
    </Reaction>

<!--Dephos of CKpCamCa4 by PP1 -->
    <!-- CKpCamCa4PP1 -> PP1 + CKCamCa4 -->
    <Reaction name = "CKpCamCa4PP1_reac" id="CKpCamPP1_reac">
        <Reactant specieID="CKpCamCa4PP1"           />
        <Product  specieID="PP1"                    />
        <Product  specieID="CKCamCa4"               />

        <forwardRate> 0.0         </forwardRate>
        <reverseRate> 0.0         </reverseRate>
        <Q10>    0.2              </Q10>
    </Reaction>


<!-- ***************************************************************************-->
<!-- CaMKII phos of Dag Lipase to suppress 2ag during LTP: NOVEL REACTION -->
    <!--1) Dgl + CKCam <-> Dgl_CKCam -->
    <Reaction name = "Dgl_CKCamCa4_bind" id="Dgl_CKCamCa4_bind">
        <Reactant specieID="Dgl"              />
        <Reactant specieID="CKCamCa4"           />
        <Product  specieID="Dgl_CKCamCa4"     />

        <forwardRate> 0.36e-6          </forwardRate>
        <reverseRate> 0.1e-3            </reverseRate>
        <Q10>     0.2                   </Q10>
    </Reaction>

    <!-- Dgl_CKCam -> pDgl + CKCam -->
    <Reaction name = "Dgl_CKCam_diss" id="Dgl_CKCam_diss">
        <Reactant specieID="Dgl_CKCamCa4"     />
        <Product  specieID="pDgl"         />
        <Product  specieID="CKCamCa4"           />

        <forwardRate> 0.025e-3            </forwardRate>
        <reverseRate> 0.0               </reverseRate>
        <Q10>   0.2                     </Q10>
    </Reaction>

    <!--2 Dgl + CKpCam <-> Dgl_CKpCam -->
    <Reaction name = "Dgl_CKpCamCa4_bind" id="Dgl_CKpCamCa4_bind">
        <Reactant specieID="Dgl"              />
        <Reactant specieID="CKpCamCa4"          />
        <Product  specieID="Dgl_CKpCamCa4"    />

        <forwardRate> 0.45e-6          </forwardRate>
        <reverseRate> 0.125e-3          </reverseRate>
        <Q10>       0.2                 </Q10>
    </Reaction>

    <!-- Dgl_CKpCam -> pDgl + CKpCam -->
    <Reaction name = "Dgl_CKpCamCa4_diss" id="Dgl_CKpCamCa4_diss">
        <Reactant specieID="Dgl_CKpCamCa4"    />
        <Product  specieID="pDgl"         />
        <Product  specieID="CKpCamCa4"          />

        <forwardRate> 0.03126e-3        </forwardRate>
        <reverseRate> 0.0               </reverseRate>
        <Q10>   0.2                     </Q10>
    </Reaction>

    <!-- 3)Dgl + CKp <-> Dgl_CKp -->
    <Reaction name = "Dgl_CKp_bind" id="Dgl_CKp_bind">
        <Reactant specieID="Dgl"              />
        <Reactant specieID="CKp"                />
        <Product  specieID="Dgl_CKp"          />

        <forwardRate> 0.36e-6          </forwardRate>
        <reverseRate> 0.1e-3            </reverseRate>
        <Q10>   0.2                     </Q10>
    </Reaction>

    <!-- Dgl_CKp -> pDgl + CKp -->
    <Reaction name = "Dgl_CKp_diss" id="Dgl_CKp_diss">
        <Reactant specieID="Dgl_CKp"          />
        <Product  specieID="pDgl"         />
        <Product  specieID="CKp"                />

        <forwardRate> 0.025e-3            </forwardRate>
        <reverseRate> 0.0               </reverseRate>
        <Q10>   0.2                     </Q10>
    </Reaction>

    <!-- pDgl dephosphorylation -->
    <Reaction name = "pDgl_dephos" id="pDgl_dephos">
        <Reactant specieID="pDgl"         />
        <Product  specieID="Dgl"           />

        <forwardRate> 0.1e-3            </forwardRate>
        <reverseRate> 0.0               </reverseRate>
        <Q10>   0.2                     </Q10>
    </Reaction>

    <!-- Ca + pDgl <-> CapDgl   -->
    <Reaction name = "Ca+pDlg--CapDgl" id="Ca+pDlg--CapDgl">
        <Reactant specieID="Ca"            />
        <Reactant specieID="pDgl"               />
        <Product  specieID="CapDgl"            />

        <forwardRate> 0.125e-03     </forwardRate>
        <reverseRate> 50e-03    </reverseRate>
        <Q10>         0.2           </Q10>
    </Reaction>
 
    <!-- Dag + CapDgl <-> DagCapDgl -->
    <Reaction name = "Dag+CapDlg--DagCapDgl" id="Dag+CapDlg--DagCapDgl">
        <Reactant specieID="Dag"            />
        <Reactant specieID="CapDgl"               />
        <Product  specieID="DagCapDgl"            />

        <forwardRate> 0.00025e-03     </forwardRate>
        <reverseRate> 0.5e-03    </reverseRate>
        <Q10>         0.2           </Q10>
    </Reaction>

    <!-- DagCapDgl <-> CapDgl + 2ag -->
    <Reaction name = "DagCapDgl--CapDgl+2ag" id="DagCapDgl--CapDgl+2ag">
        <Reactant specieID="DagCapDgl"            />
        <Product  specieID="CapDgl"               />
        <Product  specieID="2ag"            />

        <forwardRate> 0.125e-03     </forwardRate>
        <reverseRate> 0e-03    </reverseRate>
        <Q10>         0.2           </Q10>
    </Reaction>
    <!-- AKAR3 rates to allow comparison to Castro, etc. -->
     <Reaction name = "AKAR3+PKAc bind" >
        <Reactant specieID="AKAR3"            />
        <Reactant  specieID="PKAc"               />
        <Product  specieID="PKAcAKAR3"            />

        <forwardRate> 0.05e-03     </forwardRate>
        <reverseRate> 1.0e-03    </reverseRate>
        <Q10>         0.2           </Q10>
    </Reaction>

    <Reaction name = "PKAcAKAR3 phos" >
       <Reactant specieID="PKAcAKAR3"            />
        <Product  specieID="PKAc"               />
        <Product  specieID="pAKAR3"            />

        <forwardRate> 1.5e-03     </forwardRate>
        <reverseRate> 0e-03    </reverseRate>
        <Q10>         0.2           </Q10>
    </Reaction>

     <Reaction name = "pAKAR3+PP1 bind" >
        <Reactant specieID="pAKAR3"            />
        <Reactant  specieID="PP1"               />
        <Product  specieID="PP1pAKAR3"            />

        <forwardRate> 0.001e-03     </forwardRate>
        <reverseRate> 3.5e-03    </reverseRate>
        <Q10>         0.2           </Q10>
    </Reaction>

    <Reaction name = "PP1pAKAR3 dephos" >
       <Reactant specieID="PP1pAKAR3"            />
        <Product  specieID="PP1"               />
        <Product  specieID="AKAR3"            />

        <forwardRate> 2.5e-03     </forwardRate>
        <reverseRate> 0e-03    </reverseRate>
        <Q10>         0.2           </Q10>
    </Reaction>

</ReactionScheme>
