<ReactionScheme>
<!-- Gs coupled Dopamine D1 Receptor; Ligand is Da,
     Dabuf is used to eliminate injected Da -->
    <Specie name="Da"               id="Da"            kdiff="10"    kdiffunit = "mu2/s"/>
    <Specie name="Dabuf"            id="Dabuf"         kdiff="10"    kdiffunit = "mu2/s"/>
    <Specie name="buf"              id="buf"           kdiff="10"    kdiffunit = "mu2/s"/>
    <Specie name="D1R"              id="D1R"           kdiff="0"     kdiffunit="mu2/s"/>
    <Specie name="DaD1R"            id="DaD1R"         kdiff="0"     kdiffunit = "mu2/s"/>
    <Specie name="Gsabg"            id="Gsabg"         kdiff="0"    kdiffunit="mu2/s"/>
    <Specie name="DaD1RGs"          id="DaD1RGs"       kdiff="0"    kdiffunit = "mu2/s"/>
    <Specie name="PKAcDaD1RGs"      id="PKAcDaD1RGs"   kdiff="0"     kdiffunit="mu2/s"/>
    <Specie name="pDaD1RGs"         id="pDaD1RGs"      kdiff="0"     kdiffunit="mu2/s"/>
    <Specie name="GsD1R"            id="GsD1R"         kdiff="0"     kdiffunit="mu2/s"/>
    <Specie name="GasGTP"           id="GasGTP"        kdiff="0"     kdiffunit="mu2/s"/>
    <Specie name="GasGDP"           id="GasGDP"        kdiff="0"     kdiffunit="mu2/s"/>
    <Specie name="Gbg"              id="Gbg"           kdiff="0"     kdiffunit="mu2/s"/>
   
<!-- Gi coupled m4R -->
    <Specie name="ACh"          id="ACh"            kdiff="10"      kdiffunit = "mu2/s"/>
    <Specie name="AChbuf"       id="AChbuf"         kdiff="10"      kdiffunit = "mu2/s"/>
    <Specie name="Abuf"         id="Abuf"           kdiff="10"      kdiffunit = "mu2/s"/>
    <Specie name="m4R"         id="m4R"             kdiff="0"       kdiffunit = "mu2/s"/>
    <Specie name="AChm4R"       id="AChm4R"          kdiff="0"      kdiffunit = "mu2/s"/>
    <Specie name="Giabg"       id="Giabg"           kdiff="0"       kdiffunit = "mu2/s"/>
    <Specie name="AChm4RGi"     id="AChm4RGi"        kdiff="0"      kdiffunit = "mu2/s"/>
    <Specie name="Gim4R"       id="Gim4R"           kdiff="0"       kdiffunit = "mu2/s"/>
    <Specie name="GaiGTP"      id="GaiGTP"          kdiff="0"       kdiffunit = "mu2/s"/>
    <Specie name="GaiGDP"      id="GaiGDP"          kdiff="0"       kdiffunit = "mu2/s"/>

    <!-- This is AC5, from Gs model.  May need to add AC1 at some point;
	 if adding AC1, might want to change names of AC to AC5 -->
    <Specie name="AC"               id="AC"           kdiff="0"     kdiffunit="mu2/s"/>
    <Specie name="ACGas"            id="ACGas"        kdiff="0"     kdiffunit="mu2/s"/>
    <Specie name="ACGasATP"         id="ACGasATP"     kdiff="0"     kdiffunit="mu2/s"/>
    <Specie name="ACGai"          id="ACGai"         kdiff="0"      kdiffunit = "mu2/s"/>
    <Specie name="ACGasGai"       id="ACGasGai"      kdiff="0"      kdiffunit = "mu2/s"/>
    <Specie name="ACGasGaiATP"    id="ACGasGaiATP"   kdiff="0"      kdiffunit = "mu2/s"/>

<!-- cAMP, and degradation by PDEs, from Gs model -->
    <Specie name="ATP"              id="ATP"           kdiff="74.8"  kdiffunit="mu2/s"/>
    <Specie name="cAMP"             id="cAMP"          kdiff="86.4"  kdiffunit="mu2/s"/>
    <Specie name="AMP"              id="AMP"           kdiff="86.4"  kdiffunit="mu2/s"/>

    <Specie name="PDE10"            id="PDE10"         kdiff="0"     kdiffunit="mu2/s"/>
    <Specie name="PDE10cAMP"        id="PDE10cAMP"     kdiff="0"     kdiffunit="mu2/s"/>
    <Specie name="PKAcPDE10"        id="PKAcPDE10"     kdiff="0"     kdiffunit="mu2/s"/>
    <Specie name="PKAcPDE10cAMP"    id="PKAcPDE10cAMP"  kdiff="0"     kdiffunit="mu2/s"/>
    <Specie name="pPDE10"           id="pPDE10"         kdiff="0"     kdiffunit="mu2/s"/>
    <Specie name="pPDE10cAMP"       id="pPDE10cAMP"     kdiff="0"     kdiffunit="mu2/s"/>
    <Specie name="PDE2"             id="PDE2"           kdiff="0"     kdiffunit="mu2/s"/>
    <Specie name="PDE2cAMP"         id="PDE2cAMP"       kdiff="0"     kdiffunit="mu2/s"/>
    <Specie name="PDE2cAMP2"        id="PDE2cAMP2"      kdiff="0"     kdiffunit="mu2/s"/>
    <Specie name="PDE4"      id="PDE4"      kdiff="0" kdiffunit="mu2/s"/>
    <Specie name="PDE4cAMP"  id="PDE4cAMP"  kdiff="0" kdiffunit="mu2/s"/>
    <Specie name="PKAcPDE4"  id="PKAcPDE4"  kdiff="0" kdiffunit="mu2/s"/>
    <Specie name="PKAcPDE4cAMP"  id="PKAcPDE4cAMP"  kdiff="0" kdiffunit="mu2/s"/>
    <Specie name="pPDE4"     id="pPDE4"     kdiff="0" kdiffunit="mu2/s"/>
    <Specie name="pPDE4cAMP" id="pPDE4cAMP" kdiff="0" kdiffunit="mu2/s"/>

    <!-- PKA -->
    <Specie name="PKA"               id="PKA"            kdiff="0"     kdiffunit="mu2/s"/>
    <Specie name="PKAcAMP2"          id="PKAcAMP2"       kdiff="0"     kdiffunit="mu2/s"/>
    <Specie name="PKAcAMP4"          id="PKAcAMP4"       kdiff="0"     kdiffunit="mu2/s"/>
    <Specie name="PKAc"              id="PKAc"           kdiff="0.836" kdiffunit="mu2/s"/>
    <Specie name="PKAr"              id="PKAr"           kdiff="0"     kdiffunit="mu2/s"/>

    <!--0. Da + buf        <-> Dabuf     irreversible binding -->
    <Reaction name = "Da+buf--Dabuf" id="Da_buf--Dabuf">
        <Reactant specieID="Da"                      />
        <Reactant specieID="buf"                      />
        <Product  specieID="Dabuf"                     />

        <forwardRate> 0.001e-03 </forwardRate>
        <reverseRate> 0        </reverseRate>
        <Q10>         0.2           </Q10>
    </Reaction>
    <!--1a. Da + D1R        <-> DaD1R      Kd=3000  source: Sunahara et al. Nature 1991-->
    <Reaction name = "Da+D1R--DaD1R" id="Da+D1R--DaD1R">
        <Reactant specieID="Da"                      />
        <Reactant specieID="D1R"                      />
        <Product  specieID="DaD1R"                     />

        <forwardRate> 0.00166667e-03 </forwardRate>
        <reverseRate> 5e-03        </reverseRate>
        <Q10>         0.2           </Q10>
    </Reaction>
   <!-- 2a. DaD1R + Gsabg     <-> DaD1RGs      Kd=11.666667   source: Zhuang J Neurosci 2000-->
    <Reaction name = "DaD1R+Gs--DaD1RGs" id="DaD1R+Gs--DaD1RGs">
        <Reactant specieID="DaD1R"                     />
        <Reactant specieID="Gsabg"                      />
        <Product  specieID="DaD1RGs"                    />

        <forwardRate> 0.03e-03 </forwardRate>
        <reverseRate> 0.4e-03  </reverseRate>
        <Q10>         0.2        </Q10>
    </Reaction>
    <!-- 1b. Gsabg + D1R       <-> GsD1R         Kd=35   source: PMR-->
    <Reaction name = "Gsabg+D1R--GsD1R" id="Gsabg+D1R--GsD1R">
        <Reactant specieID="Gsabg"                      />
        <Reactant specieID="D1R"                      />
        <Product  specieID="GsD1R"                     />

        <forwardRate> 0.01e-03 </forwardRate>
        <reverseRate> 0.4e-03  </reverseRate>
        <Q10>         0.2         </Q10>
    </Reaction>
    <!-- 2b. GsD1R + Da       <-> DaD1RGs       Kd=1000   source: Falkenburger J Gen Phys off-rate, Dreyer J Neurosci-->
    <Reaction name = "GsD1R+Da--DaD1RGs" id="GD1R+Da--DaD1RGs">
        <Reactant specieID="GsD1R"                     />
        <Reactant specieID="Da"                      />
        <Product  specieID="DaD1RGs"                    />

        <forwardRate> 0.005e-03 </forwardRate>
        <reverseRate> 5e-03        </reverseRate>
        <Q10>         0.2           </Q10>
    </Reaction>

    <!-- 3.  DaD1RGs <-> DaD1R + GasGTP +Gbg-->
    <Reaction name = "DaD1RGs--DaD1R+Gbg+GasGTP" id="DaD1RGs--DaD1R+Gbg+GasGTP">
        <Reactant specieID="DaD1RGs"                    />
        <Product  specieID="DaD1R"                     />
        <Product  specieID="GasGTP"                  />
        <Product  specieID="Gbg"                  />

        <forwardRate> 0.25e-03        </forwardRate>
        <reverseRate> 0.0           </reverseRate>
        <Q10>         0.2           </Q10>
    </Reaction>

<!--*****************PKAc phosphorylation of DaD1R *******************************-->
    <!--1. PKAc + DaD1RGs -> PKAcDaD1RGs Km= 125nM-->
    <Reaction name = "DaD1RGs phosp1" id="phospDaD1RGs1">
        <Reactant specieID="PKAc"                   />
        <Reactant specieID="DaD1RGs"                  />
        <Product  specieID="PKAcDaD1RGs"              />

        <forwardRate> 0.0008e-03    </forwardRate>
        <reverseRate> 0.08e-03    </reverseRate>
        <Q10>         0.2           </Q10>
    </Reaction>

    <!--2. PKAcDaD1RGs -> PKAc + phosphoDaD1RGs -->
    <Reaction name = "DaD1RGs phosp2" id="phospDaD1RGs2">
        <Reactant specieID="PKAcDaD1RGs"              />
        <Product  specieID="pDaD1RGs"                 />
        <Product  specieID="PKAc"                   />

        <forwardRate> 0.02e-03    </forwardRate>
        <reverseRate> 0             </reverseRate>
        <Q10>         0.2           </Q10>
    </Reaction>

    <!--3. pDaD1RGs -> DaD1RGs -->
    <Reaction name = "dephosD1R" id="dphospD1R">
        <Reactant specieID="pDaD1RGs"              />
        <Product  specieID="DaD1RGs"               />

        <forwardRate>  0.005e-03    </forwardRate>
        <reverseRate>  0            </reverseRate>
        <Q10>          0.2          </Q10>
    </Reaction>

    <!-- *********** Gi coupled m4 receptor (VALUES ACTUALLY D2R) *************
    Should the Gi binding be increased similarly to Gs binding?-->
    <!--0. ACh + Abuf        <-> AChbuf     irreversible binding -->
    <Reaction name = "ACh+Abuf--AChbuf" id="ACh+Abuf--AChbuf">
        <Reactant specieID="ACh"                      />
        <Reactant specieID="Abuf"                      />
        <Product  specieID="AChbuf"                     />

        <forwardRate> 0.05e-03 </forwardRate>
        <reverseRate> 0        </reverseRate>
        <Q10>         0.2           </Q10>
    </Reaction>
   <!-- ACh or ACh agonist: ACh + m4R <==> AChm4R       Kd = 2000  , ADJUST WITH ACH affinity-->
      <Reaction name = "ACh+m4R--AChm4R" id="ACh+m4R--AChm4R">
        <Reactant specieID="ACh"              />
        <Reactant specieID="m4R"              />
        <Product  specieID="AChm4R"         />

        <forwardRate> 0.0025e-03 </forwardRate>
        <reverseRate> 5e-03      </reverseRate>
        <Q10>         0.2          </Q10>
    </Reaction>

   <!-- Giabg + AChm4R    <-> GiabgAChm4R    Kd = 12.21  source:  sengeles JBiolChem 265 -->
    <Reaction name = "Giabg+AChm4R--AChm4RGi" id="Giabg+AChm4R--AChm4RGi">
        <Reactant specieID="AChm4R"             />
        <Reactant specieID="Giabg"               />
        <Product  specieID="AChm4RGi"            />

        <forwardRate>  0.024e-03  </forwardRate>
        <reverseRate>  0.42e-03  </reverseRate>
        <Q10>         0.2           </Q10>
    </Reaction>

    <!-- Gi + m4R       <-> Gim4R       Kd = 350  source:  PMR, Hein et al. JBC 2006: Gi dissoc tau=14s  -->
    <Reaction name = "Giabg+m4R--Gim4R" id="Giabg+m4R--Gim4R">
        <Reactant specieID="Giabg"                      />
        <Reactant specieID="m4R"                      />
        <Product  specieID="Gim4R"                     />

        <forwardRate> 0.0012e-03 </forwardRate>
        <reverseRate> 0.42e-03  </reverseRate>
        <Q10>         0.2         </Q10>
    </Reaction>
    <!-- Gim4R + ACh       <-> AChm4RGi      Kd = 76-100 nM, ADJUST WITH ACH affinity-->
    <Reaction name = "Gim4R+ACh--AChm4RGi" id="Gm4R+ACh--AChm4RGi">
        <Reactant specieID="Gim4R"                     />
        <Reactant specieID="ACh"                      />
        <Product  specieID="AChm4RGi"                    />

        <forwardRate> 0.05e-03 </forwardRate>
        <reverseRate> 5e-03        </reverseRate>
        <Q10>         0.2           </Q10>
    </Reaction>

   <!--    AChm4RGiabg   <-> GaiGTP + AChm4R +Gbg   -->
    <Reaction name = "AChm4RGi--GaiGTP+AChm4R+Gbg" id="AChm4RGi--GaiGTP+AChm4R+Gbg">
        <Reactant specieID="AChm4RGi"               />
        <Product specieID="GaiGTP"             />
        <Product  specieID="AChm4R"                     />
        <Product  specieID="Gbg"                    />

        <forwardRate>  1.0e-03 </forwardRate>
        <reverseRate>   0  </reverseRate>
        <Q10>         0.2           </Q10>
    </Reaction>

<!--IV. *************** G protein hydrolysis and regeneration  *******************-->
    <!--1. hydrolysis: GasGTP       <-> GasGDP             -->
    <Reaction name = "GasGTP--GasGDP reac" id="GasGTP--GasGDP_id">
        <Reactant specieID="GasGTP"                  />
        <Product  specieID="GasGDP"                  />

        <forwardRate> 0.125e-03        </forwardRate>
        <reverseRate> 0.0           </reverseRate>
        <Q10>         0.2           </Q10>
    </Reaction>

    <!-- slow this down if depletion is significant, or to match regen of Gaq -->
    <!--2. regen: GasGDP + Gbg       <-> Gsabg          (in xpp: k5=100), Kd=? -->
    <Reaction name = "GasGDP+Gbg--Gs reac" id="GasGDP+Gbg--Gs_id">
        <Reactant specieID="GasGDP"                  />
        <Reactant specieID="Gbg"                    />
        <Product  specieID="Gsabg"                      />

        <forwardRate> 2e-03       </forwardRate>
        <reverseRate> 0.0           </reverseRate>
        <Q10>         0.2           </Q10>
    </Reaction>

<!-- Hydrolysis of GaiGTP - slower than with GAP activity  source: sengeles JBiolChem 265 -->
    <Reaction name = "GaiGTP--GaiGDP" id="GaiGTP--GaiGDP">
        <Reactant specieID="GaiGTP"            />
        <Product  specieID="GaiGDP"            />

        <forwardRate>   1.0e-03   </forwardRate>
        <reverseRate>   0  </reverseRate>
        <Q10>         0.2           </Q10>
    </Reaction>

<!-- 2nd order  regeneration of Gaibg source: -->
    <Reaction name = "GaiGDP--Giabg" id="GaiGDP--Giabg">
        <Reactant specieID="GaiGDP"            />
        <Reactant specieID="Gbg"                    />
        <Product  specieID="Giabg"            />

        <forwardRate>   2e-03   </forwardRate>
        <reverseRate>   0  </reverseRate>
        <Q10>         0.2           </Q10>
    </Reaction>

<!--V. AC5 to cAMP with PDEs, from Gs RXN FILE. May need to add AC1 at some point -->
    <!--1. GasGTP + AC <-> ACGas(GTP) -->
    <Reaction name = "GasGTP+AC--ACGas reac" id="GasGTP+AC--ACGas_id">
        <Reactant specieID="GasGTP"                  />
        <Reactant specieID="AC"                     />
        <Product  specieID="ACGas"                />

        <forwardRate> 0.00037e-03   </forwardRate>
        <reverseRate> 0.1e-03        </reverseRate>
        <Q10>         0.2           </Q10>
    </Reaction>
    <!--2. ACGas(GTP) + ATP    <-> ACGas(GTP)ATP     -->
    <Reaction name = "ACGas+ATP--ACGasATP reac" id="ACGas+ATP--ACGasATP_id">
        <Reactant specieID="ACGas"                />
        <Reactant specieID="ATP"                    />
        <Product  specieID="ACGasATP"             />

        <forwardRate> 0.1276e-6    </forwardRate>
        <reverseRate> 0.2612e-03    </reverseRate>
        <Q10>         0.2           </Q10>
    </Reaction>
    <!--3. ACGas(GTP)ATP       <-> ACGas(GTP) + cAMP   -->
    <Reaction name = "ACGasATP--ACGas+cAMP reac" id="ACGasATP--ACGas+cAMP_id">
        <Reactant specieID="ACGasATP"             />
        <Product  specieID="ACGas"                />
        <Product  specieID="cAMP"                   />

        <forwardRate> 28.26e-03     </forwardRate>
        <reverseRate> 0.2592e-6    </reverseRate>
        <Q10>         0.2           </Q10>
    </Reaction>
    
    <!-- Gap activity for part of ACGasATP, unclear whether backward rate needs compensation? -->
    <!--Reaction name = "ACGasATP-AC+Gas+cAMP reac" id="ACGasATP-AC+Gas+cAMP_id">
        <Reactant specieID="ACGasATP"             />
        <Product  specieID="AC"                />
        <Product  specieID="cAMP"                   />
        <Product  specieID="GasGDP"                   />

        <forwardRate> 0.2e-03     </forwardRate>
        <reverseRate> 0.0e-6    </reverseRate>
        <Q10>         0.2           </Q10>
    </Reaction-->
    
    <!-- 2a) GaiGTP + AC <-> ACGaiGTP)  Kd=96 for AC6 (160 for this rxn) source: Chen-Goodspeed JBC 280-1808, Nielson JBC 271-33308 1996 -->
    <Reaction name = "GaiGTP_AC_reac" id="GaiGTP_AC_reac">
	<Reactant specieID="GaiGTP"/>
	<Reactant specieID="AC"/>
	<Product specieID="ACGai"/>

	<forwardRate>0.0125e-3</forwardRate>
	<reverseRate>2e-3</reverseRate>
	<Q10>0.2</Q10>
    </Reaction>

<!-- 2a) GaiGTP + ACGas <-> ACGasGTP-GaiGTP)  Kd=96 for AC6 (160 for this rxn) source: Chen-Goodspeed JBC 280-18
08, Nielson JBC 271-33308 1996 -->
    <Reaction name = "GaiGTP_ACGasGTP_reac" id="GaiGTP_ACGasGTP_reac">
	<Reactant specieID="GaiGTP"/>
	<Reactant specieID="ACGas"/>
	<Product specieID="ACGasGai"/>

	<forwardRate>0.0125e-3</forwardRate>
	<reverseRate>2e-3</reverseRate>
	<Q10>0.2</Q10>
    </Reaction>
    <!-- ACGasGai + ATP    <-> ACGasGaiATP       source: Dessauer CW, Gilman AG JBC 1997-->
    <Reaction name = "ACGasGai+ATP--ACGasGaiATP" id="ACGasGai+ATP--ACGasGaiATP">
        <Reactant specieID="ACGasGai"                />
        <Reactant specieID="ATP"                    />
        <Product  specieID="ACGasGaiATP"             />

        <forwardRate> 0.01276e-6    </forwardRate>
        <reverseRate> 0.02612e-03    </reverseRate>
        <Q10>         0.2           </Q10>
    </Reaction>
    
    <!-- ACGasGTPGaiGTP_ATP       <-> ACGasGTPGaiGTP + CAMP   source:  Dessauer CW, Gilman AG JBC 1997-->
    <Reaction name = "ACGasGaiATP--ACGasGai+cAMP" id="ACGasGaiATP--ACGasGai+cAMP">
        <Reactant specieID="ACGasGaiATP"             />
        <Product  specieID="ACGasGai"                />
        <Product  specieID="cAMP"                   />

        <forwardRate> 0.2746e-03     </forwardRate>
        <reverseRate> 0.2592e-6    </reverseRate>
        <Q10>         0.2           </Q10>
    </Reaction>
    <!-- Gap activity for part of ACGasGaiATP-->
    <Reaction name = "ACGasGaiATP-ACGai+Gs+cAMP" id="ACGasGaiATP-ACGai+Gs+cAMP">
        <Reactant specieID="ACGasGaiATP"             />
        <Product  specieID="ACGai"                />
        <Product  specieID="cAMP"                   />
        <Product  specieID="GasGDP"                   />

        <forwardRate> 0.01e-03     </forwardRate>
        <reverseRate> 0.0    </reverseRate>
        <Q10>         0.2           </Q10>
    </Reaction> 

    <!--VII. *****************PDE10 *******************************-->
    <!--1. PDE10 + cAMP    <-> PDE10cAMP         (in xpp: KfPDE10=    KbPDE10=  ) -->
    <Reaction name = "PDE10+cAMP--PDE10cAMP" id="PDE10+cAMP--PDE10cAMP_id">
        <Reactant specieID="PDE10"                  />
        <Reactant specieID="cAMP"                   />
        <Product  specieID="PDE10cAMP"              />

        <forwardRate> 0.084e-3        </forwardRate>
        <reverseRate> 16.8e-3        </reverseRate>
        <Q10>         0.2           </Q10>
    </Reaction>
    <!--2. PDE10cAMP        -> PDE10 + AMP       (in xpp: V_PDE10=18) -->
    <Reaction name = "PDE10cAMP--PDE10+AMP" id="PDE10cAMP--PDE10+AMP_id">
        <Reactant specieID="PDE10cAMP"              />
        <Product  specieID="PDE10"                  />
        <Product  specieID="AMP"                    />

        <forwardRate> 4.2e-3         </forwardRate>
        <reverseRate> 0.0           </reverseRate>
        <Q10>         0.2           </Q10>
    </Reaction>

<!--VIII. *****************PKAc phosphorylation of PDE10 *******************************-->
<!-- slower than previous, based on A. Chay and cAMP decay -->
    <!--1a. PKAc + PDE10 -> PKAcPDE10 -->
    <Reaction name = "PDE10 phosp1" id="phospPDE101">
        <Reactant specieID="PKAc"                   />
        <Reactant specieID="PDE10"                  />
        <Product  specieID="PKAcPDE10"              />

        <forwardRate> 0.125e-06    </forwardRate>
        <reverseRate> 0.012e-03    </reverseRate>
        <Q10>         0.2           </Q10>
    </Reaction>

    <!-- PKAcPDE10 -> PKAc + pPDE10 -->
    <Reaction name = "PDE10 phosp2" id="phospPDE10_2">
        <Reactant specieID="PKAcPDE10"              />
        <Product  specieID="pPDE10"                 />
        <Product  specieID="PKAc"                   />

        <forwardRate> 0.003e-03    </forwardRate>
        <reverseRate> 0             </reverseRate>
        <Q10>         0.2           </Q10>
    </Reaction>

   <!--1b. PKAc + PDE10cAMP -> PKAcPDE10cAMP -->
    <Reaction name = "PDE10cAMP phosp1" id="phospPDE10cAMP1">
        <Reactant specieID="PKAc"                  />
        <Reactant specieID="PDE10cAMP"             />
        <Product  specieID="PKAcPDE10cAMP"         />

        <forwardRate> 0.125e-06    </forwardRate>
        <reverseRate> 0.012e-03    </reverseRate>
        <Q10>         0.2           </Q10>
    </Reaction>

    <!-- PKAcPDE10cAMP -> PKAc + pPDE10 -->
    <Reaction name = "PDE10cAMP phosp2" id="phospPDE10cAMP_2">
        <Reactant specieID="PKAcPDE10cAMP"         />
        <Product  specieID="pPDE10cAMP"            />
        <Product  specieID="PKAc"                  />

        <forwardRate> 0.003e-03    </forwardRate>
        <reverseRate> 0             </reverseRate>
        <Q10>         0.2           </Q10>
    </Reaction>

    <!--3. pPDE10 -> PDE10 -->
    <Reaction name = "PDE10 d_phosp" id="dphospPDE10">
        <Reactant specieID="pPDE10"                 />
        <Product  specieID="PDE10"                  />

        <forwardRate>  0.005e-03    </forwardRate>
        <reverseRate>  0            </reverseRate>
        <Q10>          0.2          </Q10>
    </Reaction>

<!--IX. *****************pPDE10 activity *******************************-->
    <!--1. pPDE10 + cAMP    <-> pPDE10cAMP         -->
    <Reaction name = "pPDE10+cAMP--pPDE10cAMP" id="pPDE10+cAMP--pPDE10cAMP_id">
        <Reactant specieID="pPDE10"                 />
        <Reactant specieID="cAMP"                   />
        <Product  specieID="pPDE10cAMP"             />

        <forwardRate>  0.336e-3      </forwardRate>
        <reverseRate>  67.2e-3        </reverseRate>
        <Q10>          0.2           </Q10>
    </Reaction>

    <!-- pPDE10cAMP        -> pPDE10 + AMP       source: -->
    <Reaction name = "pPDE10cAMP--pPDE10+AMP" id="pPDE10cAMP--pPDE10+AMP">
        <Reactant specieID="pPDE10cAMP"             />
        <Product  specieID="pPDE10"                 />
        <Product  specieID="AMP"                    />

        <forwardRate>  16.8e-3        </forwardRate>
        <reverseRate>  0.0          </reverseRate>
        <Q10>          0.2          </Q10>
    </Reaction>

<!-- *****************PDE4 and pPDE4 activity *******************************-->
    <!-- 15)  cAMP + PDE4  <-> PDE4cAMP -->
    <Reaction name = "PDE4 enzyme1" id="PDE4bind">
        <Reactant specieID="PDE4"           />
        <Reactant specieID="cAMP"            />
        <Product  specieID="PDE4cAMP"       />
        <forwardRate> 0.0216e-03  </forwardRate>
        <reverseRate> 68.95e-03    </reverseRate>
        <Q10>         0.2          </Q10>
    </Reaction>

    <!-- 16)  PDE4cAMP -> AMP + PDE4 -->
    <Reaction name = "PDE4 actvcomp" id="PDE4cat">
        <Reactant specieID="PDE4cAMP"       />
        <Product  specieID="PDE4"           />
        <Product  specieID="AMP"             />
        <forwardRate> 17.233e-03    </forwardRate>
        <reverseRate> 0            </reverseRate>
        <Q10>         0.2          </Q10>
    </Reaction>

    <!-- 17)  cAMP + pPDE4  <-> pPDE4cAMP -->
    <Reaction name = "pPDE4 enzyme1" id="pPDE4bind">
        <Reactant specieID="pPDE4"           />
        <Reactant specieID="cAMP"             />
        <Product  specieID="pPDE4cAMP"       />
        <forwardRate> 0.0864e-03   </forwardRate>
        <reverseRate> 275.8e-3  </reverseRate>
        <Q10>         0.2          </Q10>
    </Reaction>

    <!-- 18)  pPDE4cAMP -> AMP + pPDE4 -->
    <Reaction name = "pPDE4 actvcomp" id="pPDE4cat">
        <Reactant specieID="pPDE4cAMP"       />
        <Product  specieID="pPDE4"           />
        <Product  specieID="AMP"              />
        <forwardRate> 68.932e-3   </forwardRate>
        <reverseRate> 0            </reverseRate>
        <Q10>         0.2          </Q10>
    </Reaction>

   <!-- 19)  PKAc + PDE4 -> PKAcPDE4 -->
    <Reaction name = "PDE4 phosp1" id="phospPDE41">
        <Reactant specieID="PKAc"            />
        <Reactant specieID="PDE4"           />
        <Product  specieID="PKAcPDE4"       />
        <forwardRate> 0.125e-6  </forwardRate>
        <reverseRate> 0.04e-3    </reverseRate>
        <Q10>         0.2          </Q10>
    </Reaction>

    <!-- 20)  PKAcPDE4 -> PKAc + pPDE4 -->
    <Reaction name = "PDE4 phosp2" id="phospPDE42">
        <Reactant specieID="PKAcPDE4"       />
        <Product  specieID="pPDE4"          />
        <Product  specieID="PKAc"            />
        <forwardRate> 0.01e-3    </forwardRate>
        <reverseRate> 0            </reverseRate>
        <Q10>         0.2          </Q10>
    </Reaction>

    <!-- 21)  PDE4cAMP + PKAc  <-> PKAc_PDE4_cAMP -->
    <Reaction name = "PKAcPDE4cAMP-bind" id="PKAcPDE4cAMP-bind">
        <Reactant specieID="PDE4cAMP"        />
        <Reactant specieID="PKAc"             />
        <Product  specieID="PKAcPDE4cAMP"  />
        <forwardRate> 0.125e-6  </forwardRate>
        <reverseRate> 0.04e-3    </reverseRate>
        <Q10>         0.2          </Q10>
    </Reaction>

    <!-- 22)  PKAcPDE4cAMP -> pPDE4cAMP + PKAc -->
    <Reaction name = "PKAcPDE4cAMP-diss" id="PKAcPDE4cAMP-diss">
        <Reactant specieID="PKAcPDE4cAMP"  />
        <Product  specieID="pPDE4cAMP"       />
        <Product  specieID="PKAc"             />
        <forwardRate> 0.01e-3    </forwardRate>
        <reverseRate> 0            </reverseRate>
        <Q10>         0.2          </Q10>
    </Reaction>

    <!-- 23)  pPDE4 -> PDE4 -->
    <Reaction name = "PDE4 d_phosp" id="dphospPDE4">
        <Reactant specieID="pPDE4"          />
        <Product  specieID="PDE4"           />
        <forwardRate> 0.005e-03     </forwardRate>
        <reverseRate> 0            </reverseRate>
        <Q10>         0.2          </Q10>
    </Reaction>

    <!--3. AMP             -> ATP              (in xpp: katp=10) -->
    <Reaction name = "AMP--ATP" id="AMP--ATP_id">
        <Reactant specieID="AMP"                    />
        <Product  specieID="ATP"                    />

        <forwardRate> 1.00e-03      </forwardRate>
        <reverseRate> 0.0           </reverseRate>
        <Q10>         0.2           </Q10>
    </Reaction>

<!-- ******* PKA from Asia Hippo Model ********* -->     
    <!--1) PKA + 2cAMP <-> PKAcAMP2 -->
    <Reaction name = "PKA_bind" id="PKA_bind">
	<Reactant specieID="PKA"/>
        <Reactant specieID="cAMP" n="2"/>
	<Product specieID="PKAcAMP2"/>


        <forwardRate>0.260868e-06</forwardRate>
	<reverseRate>0.060e-03</reverseRate>
	<Q10>0.2</Q10>
    </Reaction>

    <!--2) PKAcAMP2 + 2cAMP <-> PKAcAMP4 -->
    <Reaction name = "PKAcAMP2_bind" id="PKAcAMP2_bind">
	<Reactant specieID="PKAcAMP2"/>
        <Reactant specieID="cAMP" n="2"/>
	<Product specieID="PKAcAMP4"/>

    <forwardRate>0.346218e-06</forwardRate>
	<reverseRate>0.6e-3</reverseRate>
	<Q10>0.2</Q10>
    </Reaction>

    <!--3) PKAcAMP4 <-> 2PKAr(as dimer) + 2PKAc(monomers) -->
    <Reaction name = "PKAcAMP4_diss" id="PKAcAMP4_diss">
	<Reactant specieID="PKAcAMP4"/>
	<Product specieID="PKAr"/>
	<Product specieID="PKAc" n="2"/>  

	<forwardRate>0.048e-03</forwardRate>
	<reverseRate>0.0051e-03</reverseRate>
	<Q10>0.2</Q10>
    </Reaction>

<!-- extra PDE, called PDE2, just for thin dendrite, requires 2 cAMP binding for activity -->
<!-- PDE2 + cAMP    <-> PDE2cAMP       Km=40 uM, source: WadaJBiolChem262-5139
Not allowing this single bound form to be active -->
    <Reaction name = "PDE2+cAMP--PDE2cAMP" id="PDE2+cAMP--PDE2cAMP">
        <Reactant specieID="PDE2"                  />
        <Reactant specieID="cAMP"                   />
        <Product  specieID="PDE2cAMP"              />

        <forwardRate> 0.00002e-3        </forwardRate>
        <reverseRate> 0.5e-3        </reverseRate>
        <Q10>         0.2           </Q10>
    </Reaction>
    <!-- PDE2cGMP+cAMP        <-> PDE2cGMPcAMP -> PDE2cGMP + AMP   kD=1.0 uM, Kcat=18x source: WadaJBiolChem262-5139   -->
    <Reaction name = "PDE2cAMP+cAMP--PDE2cAMP2" id="PDE2cAMP+cAMP--PDE2cAMP2">
        <Reactant specieID="PDE2cAMP"              />
        <Reactant specieID="cAMP"                   />
	<Product specieID="PDE2cAMP2"              />
        <forwardRate> 0.0059e-3         </forwardRate>
        <reverseRate> 0.5e-3           </reverseRate>
        <Q10>         0.2           </Q10>
    </Reaction>
  
    <Reaction name = "PDE2cAMP2--PDE2cAMP+AMP" id="PDE2cAMP2--PDE2cAMP+AMP">
	<Reactant specieID="PDE2cAMP2"              />
        <Product specieID="PDE2cAMP"              />
        <Product  specieID="AMP"                    />
        <forwardRate> 5.4e-3         </forwardRate>
        <reverseRate> 0.0           </reverseRate>
        <Q10>         0.2           </Q10>
    </Reaction>

</ReactionScheme>

