<ReactionScheme>
<!-- Gs coupled Dopamine D1 Receptor; Ligand is Da,
     Dabuf is used to eliminate injected Da -->
    <Specie name="Da"               id="Da"               kdiff="10"      kdiffunit = "mu2/s"/>
    <Specie name="D1R"               id="D1R"               kdiff="0"     kdiffunit="mu2/s"/>
    <Specie name="DaD1R"            id="DaD1R"            kdiff="0"        kdiffunit = "mu2/s"/>
    <Specie name="Gsabg"             id="Gsabg"             kdiff="0"     kdiffunit="mu2/s"/>
    <Specie name="DaD1RGs"          id="DaD1RGs"          kdiff="0"        kdiffunit = "mu2/s"/>
    <Specie name="DaD1RGbg"          id="DaD1RGbg"          kdiff="0"        kdiffunit = "mu2/s"/>
    <Specie name="GsD1R"             id="GsD1R"             kdiff="0"     kdiffunit="mu2/s"/>
    <Specie name="GasGTP"            id="GasGTP"            kdiff="0"     kdiffunit="mu2/s"/>
    <Specie name="GasGDP"            id="GasGDP"            kdiff="0"     kdiffunit="mu2/s"/>
    <Specie name="Gbg"               id="Gbg"               kdiff="0"     kdiffunit="mu2/s"/>
<!-- This is AC5, from Gs model.  May need to add AC1 at some point; if adding AC1, might want to change names of AC to AC5 -->
    <Specie name="AC"                id="AC"                kdiff="0"     kdiffunit="mu2/s"/>
    <Specie name="ACGas"             id="ACGas"             kdiff="0"     kdiffunit="mu2/s"/>
    <Specie name="ACGasATP"          id="ACGasATP"          kdiff="0"     kdiffunit="mu2/s"/>

<!-- cAMP, and degradation by PDEs, from Gs model -->
    <Specie name="ATP"               id="ATP"               kdiff="74.8"  kdiffunit="mu2/s"/>
    <Specie name="cAMP"              id="cAMP"              kdiff="86.4"  kdiffunit="mu2/s"/>
    <Specie name="AMP"               id="AMP"               kdiff="86.4"     kdiffunit="mu2/s"/>

    <Specie name="PDE10"             id="PDE10"             kdiff="0"     kdiffunit="mu2/s"/>
    <Specie name="PDE10cAMP"         id="PDE10cAMP"         kdiff="0"     kdiffunit="mu2/s"/>
    <Specie name="PKAcPDE10"         id="PKAcPDE10"         kdiff="0"     kdiffunit="mu2/s"/>
    <Specie name="PKAcPDE10cAMP"     id="PKAcPDE10cAMP"     kdiff="0"     kdiffunit="mu2/s"/>
    <Specie name="pPDE10"            id="pPDE10"            kdiff="0"     kdiffunit="mu2/s"/>
    <Specie name="pPDE10cAMP"        id="pPDE10cAMP"        kdiff="0"     kdiffunit="mu2/s"/>
    <Specie name="PKAcPDE4"         id="PKAcPDE4"         kdiff="0"     kdiffunit="mu2/s"/>
    <Specie name="pPDE4"            id="pPDE4"            kdiff="0"     kdiffunit="mu2/s"/>
    <Specie name="pPDE4cAMP"        id="pPDE4cAMP"        kdiff="0"     kdiffunit="mu2/s"/>

    <!-- PKA -->
    <Specie name="PKA"               id="PKA"               kdiff="0"     kdiffunit="mu2/s"/>
    <Specie name="PKAcAMP2"          id="PKAcAMP2"          kdiff="0"     kdiffunit="mu2/s"/>
    <Specie name="PKAcAMP4"          id="PKAcAMP4"          kdiff="0"     kdiffunit="mu2/s"/>
    <Specie name="PKAc"              id="PKAc"              kdiff="0.836" kdiffunit="mu2/s"/>
    <Specie name="PKAr"              id="PKAr"              kdiff="0"     kdiffunit="mu2/s"/>

    <!--1a. Da + D1R        <-> DaD1R      Kd=3000  source: Sunahara et al. Nature 1991-->
    <Reaction name = "Da+D1R--DaD1R" id="Da+D1R--DaD1R">
        <Reactant specieID="Da"                      />
        <Reactant specieID="D1R"                      />
        <Product  specieID="DaD1R"                     />

        <forwardRate> 0.00166667e-03 </forwardRate>
        <reverseRate> 5e-03        </reverseRate>
        <Q10>         0.2           </Q10>
    </Reaction>
   <!-- 2a. DaD1R + Gsabg     <-> DaD1RGs      Kd=11.666667   source: Zhuang J Neurosci 2000-->
    <Reaction name = "DaD1R+Gs--DaD1RGs" id="DaD1R+Gs--DaD1RGs">
        <Reactant specieID="DaD1R"                     />
        <Reactant specieID="Gsabg"                      />
        <Product  specieID="DaD1RGs"                    />

        <forwardRate> 0.03e-03 </forwardRate>
        <reverseRate> 0.4e-03  </reverseRate>
        <Q10>         0.2        </Q10>
    </Reaction>
    <!-- 1b. Gsabg + D1R       <-> GsD1R         Kd=35   source: PMR-->
    <Reaction name = "Gsabg+D1R--GsD1R" id="Gsabg+D1R--GsD1R">
        <Reactant specieID="Gsabg"                      />
        <Reactant specieID="D1R"                      />
        <Product  specieID="GsD1R"                     />

        <forwardRate> 0.01e-03 </forwardRate>
        <reverseRate> 0.4e-03  </reverseRate>
        <Q10>         0.2         </Q10>
    </Reaction>
    <!-- 2b. GsD1R + Da       <-> DaD1RGs       Kd=1000   source: Falkenburger J Gen Phys off-rate, Dreyer J Neurosci-->
    <Reaction name = "GsD1R+Da--DaD1RGs" id="GD1R+Da--DaD1RGs">
        <Reactant specieID="GsD1R"                     />
        <Reactant specieID="Da"                      />
        <Product  specieID="DaD1RGs"                    />

        <forwardRate> 0.005e-03 </forwardRate>
        <reverseRate> 5e-03        </reverseRate>
        <Q10>         0.2           </Q10>
    </Reaction>

    <!-- 3.  DaD1RGs <-> DaD1RGbg + GasGTP +Gbg-->
    <Reaction name = "DaD1RGs--Da1RGbg+GasGTP" id="DaD1RGs--Da1RGbg+GasGTP">
        <Reactant specieID="DaD1RGs"                    />
        <Product  specieID="GasGTP"                  />

        <forwardRate> 2e-03        </forwardRate>
        <reverseRate> 0.0           </reverseRate>
        <Q10>         0.2           </Q10>
    </Reaction>
    <Reaction name = "Da1RGbg--DaD1R+Gbg" id="Da1RGbg--DaD1R+Gbg">
        <Reactant specieID="DaD1RGbg"                  />
        <Product  specieID="DaD1R"                     />
        <Product  specieID="Gbg"                    />

        <forwardRate> 16e-03        </forwardRate>
        <reverseRate> 0.0           </reverseRate>
        <Q10>         0.2           </Q10>
    </Reaction>

<!--IV. *************** G protein hydrolysis and regeneration  *******************-->
    <!--1. hydrolysis: GasGTP       <-> GasGDP            (1.0 based on Chay model) -->
    <Reaction name = "GasGTP--GasGDP reac" id="GasGTP--GasGDP_id">
        <Reactant specieID="GasGTP"                  />
        <Product  specieID="GasGDP"                  />

        <forwardRate> 1e-03        </forwardRate>
        <reverseRate> 0.0           </reverseRate>
        <Q10>         0.2           </Q10>
    </Reaction>

    <!-- slow this down if depletion is significant, or to match regen of Gaq -->
    <!--2. regen: GasGDP + Gbg       <-> Gsabg          (in xpp: k5=100), Kd=? -->
    <Reaction name = "GasGDP+Gbg--Gs reac" id="GasGDP+Gbg--Gs_id">
        <Reactant specieID="GasGDP"                  />
        <Reactant specieID="Gbg"                    />
        <Product  specieID="Gsabg"                      />

        <forwardRate> 2e-03       </forwardRate>
        <reverseRate> 0.0           </reverseRate>
        <Q10>         0.2           </Q10>
    </Reaction>

<!--V. AC5 to cAMP with PDEs, from Gs RXN FILE. May need to add AC1 at some point -->
    <!--1a. GasGTP + AC <-> ACGas(GTP) -->
    <Reaction name = "GasGTP+AC--ACGas reac" id="GasGTP+AC--ACGas_id">
        <Reactant specieID="GasGTP"                  />
        <Reactant specieID="AC"                     />
        <Product  specieID="ACGas"                />

        <forwardRate> 0.00037e-03   </forwardRate>
        <reverseRate> 0.1e-03        </reverseRate>
        <Q10>         0.2           </Q10>
    </Reaction>
    <!--2a. ACGas(GTP) + ATP    <-> ACGas(GTP)ATP     -->
    <Reaction name = "ACGas+ATP--ACGasATP reac" id="ACGas+ATP--ACGasATP_id">
        <Reactant specieID="ACGas"                />
        <Reactant specieID="ATP"                    />
        <Product  specieID="ACGasATP"             />

        <forwardRate> 0.1276e-6    </forwardRate>
        <reverseRate> 0.2612e-03    </reverseRate>
        <Q10>         0.2           </Q10>
    </Reaction>
    <!--3a. ACGas(GTP)ATP       <-> ACGas(GTP) + cAMP   -->
    <Reaction name = "ACGasATP--ACGas+cAMP reac" id="ACGasATP--ACGas+cAMP_id">
        <Reactant specieID="ACGasATP"             />
        <Product  specieID="ACGas"                />
        <Product  specieID="cAMP"                   />

        <forwardRate> 28.46e-03     </forwardRate>
        <reverseRate> 0.2592e-6    </reverseRate>
        <Q10>         0.2           </Q10>
    </Reaction>
    
<!--VII. *****************PDE10 *******************************-->
    <!--1. PDE10 + cAMP    <-> PDE10cAMP         (in xpp: KfPDE10=    KbPDE10=  ) -->
    <Reaction name = "PDE10+cAMP--PDE10cAMP" id="PDE10+cAMP--PDE10cAMP_id">
        <Reactant specieID="PDE10"                  />
        <Reactant specieID="cAMP"                   />
        <Product  specieID="PDE10cAMP"              />

        <forwardRate> 0.084e-3        </forwardRate>
        <reverseRate> 16.8e-3        </reverseRate>
        <Q10>         0.2           </Q10>
    </Reaction>
    <!--2. PDE10cAMP        -> PDE10 + AMP       (in xpp: V_PDE10=18) -->
    <Reaction name = "PDE10cAMP--PDE10+AMP" id="PDE10cAMP--PDE10+AMP_id">
        <Reactant specieID="PDE10cAMP"              />
        <Product  specieID="PDE10"                  />
        <Product  specieID="AMP"                    />

        <forwardRate> 4.2e-3         </forwardRate>
        <reverseRate> 0.0           </reverseRate>
        <Q10>         0.2           </Q10>
    </Reaction>

<!--VIII. *****************PKAc phosphorylation of PDE10 *******************************-->
<!-- slower than previous,  E.g. 10x based on A. Chay research. -->
    <!--1a. PKAc + PDE10 -> PKAcPDE10 -->
    <Reaction name = "PDE10 phosp1" id="phospPDE101">
        <Reactant specieID="PKAc"                   />
        <Reactant specieID="PDE10"                  />
        <Product  specieID="PKAcPDE10"              />

        <forwardRate> 6.25e-07    </forwardRate>
        <reverseRate> 0.0602e-03    </reverseRate>
        <Q10>         0.2           </Q10>
    </Reaction>

    <!--2a. PKAcPDE10 -> PKAc + pPDE10 -->
    <Reaction name = "PDE10 phosp2" id="phospPDE102">
        <Reactant specieID="PKAcPDE10"              />
        <Product  specieID="pPDE10"                 />
        <Product  specieID="PKAc"                   />

        <forwardRate> 0.0150e-03    </forwardRate>
        <reverseRate> 0             </reverseRate>
        <Q10>         0.2           </Q10>
    </Reaction>

   <!--1b. PKAc + PDE10cAMP -> PKAcPDE10cAMP -->
    <Reaction name = "PDE10cAMP phosp1" id="phospPDE10cAMP1">
        <Reactant specieID="PKAc"                  />
        <Reactant specieID="PDE10cAMP"             />
        <Product  specieID="PKAcPDE10cAMP"         />

        <forwardRate> 6.25e-07    </forwardRate>
        <reverseRate> 0.0602e-03    </reverseRate>
        <Q10>         0.2           </Q10>
    </Reaction>

    <!--2b. PKAcPDE10cAMP -> PKAc + pPDE10cAMP -->
    <Reaction name = "PDE10cAMP phosp2" id="phospPDE10cAMP2">
        <Reactant specieID="PKAcPDE10cAMP"         />
        <Product  specieID="pPDE10cAMP"            />
        <Product  specieID="PKAc"                  />

        <forwardRate> 0.0150e-03    </forwardRate>
        <reverseRate> 0             </reverseRate>
        <Q10>         0.2           </Q10>
    </Reaction>

    <!--3. pPDE10 -> PDE10 -->
    <Reaction name = "PDE10 d_phosp" id="dphospPDE10">
        <Reactant specieID="pPDE10"                 />
        <Product  specieID="PDE10"                  />

        <forwardRate>  0.01036e-03    </forwardRate>
        <reverseRate>  0            </reverseRate>
        <Q10>          0.2          </Q10>
    </Reaction>

<!--IX. *****************pPDE10 activity *******************************-->
    <!--1. pPDE10 + cAMP    <-> pPDE10cAMP         -->
    <Reaction name = "pPDE10+cAMP--pPDE10cAMP" id="pPDE10+cAMP--pPDE10cAMP_id">
        <Reactant specieID="pPDE10"                 />
        <Reactant specieID="cAMP"                   />
        <Product  specieID="pPDE10cAMP"             />

        <forwardRate>  0.1008e-3      </forwardRate>
        <reverseRate>  16.8e-3        </reverseRate>
        <Q10>          0.2           </Q10>
    </Reaction>

    <!--2. pPDE10cAMP        -> pPDE10 + AMP       (in xpp: V_pPDE10=18) -->
    <Reaction name = "pPDE10cAMP--pPDE10+AMP" id="pPDE10cAMP--pPDE10+AMP_id">
        <Reactant specieID="pPDE10cAMP"             />
        <Product  specieID="pPDE10"                 />
        <Product  specieID="AMP"                    />

        <forwardRate>  8.4e-3        </forwardRate>
        <reverseRate>  0.0          </reverseRate>
        <Q10>          0.2          </Q10>
    </Reaction>

    <!--3. AMP             -> ATP              (in xpp: katp=10) -->
    <Reaction name = "AMP--ATP" id="AMP--ATP_id">
        <Reactant specieID="AMP"                    />
        <Product  specieID="ATP"                    />

        <forwardRate> 1.00e-03      </forwardRate>
        <reverseRate> 0.0           </reverseRate>
        <Q10>         0.2           </Q10>
    </Reaction>

<!-- ******* PKA from Asia Hippo Model ********* -->     
    <!--1) PKA + 2cAMP <-> PKAcAMP2 -->
    <Reaction name = "PKA_bind" id="PKA_bind">
	<Reactant specieID="PKA"/>
        <Reactant specieID="cAMP" n="2"/>
	<Product specieID="PKAcAMP2"/>


        <forwardRate>0.260868e-06</forwardRate>
	<reverseRate>0.060e-03</reverseRate>
	<Q10>0.2</Q10>
    </Reaction>

    <!--2) PKAcAMP2 + 2cAMP <-> PKAcAMP4 -->
    <Reaction name = "PKAcAMP2_bind" id="PKAcAMP2_bind">
	<Reactant specieID="PKAcAMP2"/>
        <Reactant specieID="cAMP" n="2"/>
	<Product specieID="PKAcAMP4"/>

    <forwardRate>0.346218e-06</forwardRate>
	<reverseRate>0.6e-3</reverseRate>
	<Q10>0.2</Q10>
    </Reaction>

    <!--3) PKAcAMP4 <-> 2PKAr(as dimer) + 2PKAc(monomers) -->
    <Reaction name = "PKAcAMP4_diss" id="PKAcAMP4_diss">
	<Reactant specieID="PKAcAMP4"/>
	<Product specieID="PKAr"/>
	<Product specieID="PKAc" n="2"/>  

	<forwardRate>0.048e-03</forwardRate>
	<reverseRate>0.0051e-03</reverseRate>
	<Q10>0.2</Q10>
    </Reaction>

<!-- extra PDE, called PDE4, just for thin dendrite, only phospho form active -->
    <!--1. PKAc + PDE4 -> PKAcPDE4 -->
    <Reaction name = "PDE4 phosp1" id="phospPDE4_1">
        <Reactant specieID="PKAc"                   />
        <Reactant specieID="PDE4"                  />
        <Product  specieID="PKAcPDE4"              />

        <forwardRate> 6.25e-03    </forwardRate>
        <reverseRate> 0.602e-0    </reverseRate>
        <Q10>         0.2           </Q10>
    </Reaction>

    <!--2. PKAcPDE4 -> PKAc + pPDE4 -->
    <Reaction name = "PDE4 phosp2" id="phospPDE4_2">
        <Reactant specieID="PKAcPDE4"              />
        <Product  specieID="pPDE4"                 />
        <Product  specieID="PKAc"                   />

        <forwardRate> 0.150e-0    </forwardRate>
        <reverseRate> 0             </reverseRate>
        <Q10>         0.2           </Q10>
    </Reaction>

    <!--3. pPDE4 + cAMP    <-> pPDE4cAMP    Km=2.4 uM     -->
    <Reaction name = "pPDE4+cAMP--pPDE4cAMP" id="pPDE4+cAMP--pPDE4cAMP_id">
        <Reactant specieID="pPDE4"                 />
        <Reactant specieID="cAMP"                   />
        <Product  specieID="pPDE4cAMP"             />

        <forwardRate>  0.01e-3      </forwardRate>
        <reverseRate>  16.0e-3        </reverseRate>
        <Q10>          0.2           </Q10>
    </Reaction>

    <!--4. pPDE4cAMP        -> pPDE4 + AMP        -->
    <Reaction name = "pPDE4cAMP--pPDE4+AMP" id="pPDE4cAMP--pPDE4+AMP_id">
        <Reactant specieID="pPDE4cAMP"             />
        <Product  specieID="pPDE4"                 />
        <Product  specieID="AMP"                    />

        <forwardRate>  8.0e-3        </forwardRate>
        <reverseRate>  0.0          </reverseRate>
        <Q10>          0.2          </Q10>
    </Reaction>

</ReactionScheme>

